PsychoPy2experiment version="2026.2.3"
Settings
  Audio lib = ptb
  Data filename = os.path.join(session_folder, '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date']))
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '01', 'dummy_vpixx': False}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = [-1, -1, -1]
  expName = ChoiceRT_Combined
  frameRate = 120
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine eyelinkSetup
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    CodeComponent elConfig
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # elConfig  |  "Begin Routine" tab  |  routine: eyelinkSetup
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, at the start of the eyelinkSetup routine, before
        #               the eye tracker is calibrated.
        #
        # WHAT IT DOES: sets the eye tracker to record 500 samples per second
        #               (500 Hz). In Remote Mode, 500 Hz is the fastest rate the
        #               EyeLink 1000 Plus can record.
        #
        # WHERE THE NAMES COME FROM:
        #   pylink     - SR Research's Python library for controlling the eye
        #                tracker. The EyeLink "Initialize" component in this
        #                routine loads it, so you don't have to import it.
        #   dummy_mode - True or False, also created by the Initialize component.
        #                True means "no eye tracker is connected, just pretend".
        #                Use it to test the experiment on a computer with no
        #                tracker. Turn it on with the "Dummy Mode" tick box on
        #                the Initialize component.
        # ======================================================================

        # Get the connection to the eye tracker. The Initialize component opened
        # it when the experiment started.
        el_tracker = pylink.getEYELINK()

        # Only send settings when a real eye tracker is connected.
        if not dummy_mode:
            # Put the tracker in "offline" mode (idle, not recording). Its
            # settings can only be changed while it is offline.
            el_tracker.setOfflineMode()

            # Record at 500 samples per second.
            el_tracker.sendCommand("sample_rate 500")

            # Remote Mode itself (no chin rest; a small target sticker on the
            # participant's forehead) is chosen on the EyeLink Host PC, under
            # "Set Options". To choose it from this experiment instead, delete
            # the "#" at the start of the next line.
            # RTABLER means: desktop mount, remote mode, one eye.
            # el_tracker.sendCommand("elcl_select_configuration = RTABLER")

            # Write a note into the eye-tracking data file (the "EDF" file) so
            # anyone analysing it later can see which settings were used.
            el_tracker.sendMessage("SESSION_CONFIG remote_mode sample_rate_500")
    TextComponent elInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        Eye tracker setup

        Please keep your head still and look at the screen.

        We will now calibrate the eye tracker: follow the dot with your eyes and look at its centre until it moves.

        (Experimenter: press SPACE to enter Camera Setup.
        Enter = camera image, C = calibrate, V = validate, O = continue to the task.)
    KeyboardComponent key_setup
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = False
      hostAddress = 100.1.1.1
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV13
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetSize = 24
      targetType = picture
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  Routine instruct
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    CodeComponent vpixxSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # vpixxSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as soon as the experiment starts, before the start
        #               dialog appears and before the window opens.
        #
        # WHAT IT DOES: loads VPixx's Python library, pypixxlib.
        #
        # WHAT THE DATAPixx3 DOES IN THIS EXPERIMENT:
        #   The DATAPixx3 is VPixx's box that sits between the stimulus PC and
        #   the projector. Every frame the PC draws passes through it. Here it
        #   has two jobs:
        #     1. MEG TRIGGERS. It reads the colour of the top-left screen pixel
        #        at every screen refresh and sends it to the MEG as a trigger
        #        number ("Pixel Mode"). See triggerSetup.
        #     2. SOUND. It plays the tone from its own memory, started exactly
        #        at a screen refresh, which the PC's sound card can't do. See
        #        toneSetup.
        #   This component only does what both jobs need: load the library,
        #   connect to the box, and disconnect at the end.
        #
        # WHY THESE COMPONENTS ARE IN THE instruct ROUTINE:
        #   A code component has to live in some routine. The "Experiment" tabs
        #   (Before Experiment, Begin Experiment) run once per session, no
        #   matter which routine they are in.
        #   The three VPixx components must stay in this order: vpixxSetup,
        #   triggerSetup, toneSetup. Builder runs their code top to bottom, and
        #   the other two use names made here.
        # ======================================================================

        # ---- Load the VPixx library -----------------------------------------
        # try / except ImportError means: try to load pypixxlib, and if it isn't
        # installed on this computer, carry on without it instead of crashing.
        # The Begin Experiment tab then switches to dummy mode (no DATAPixx3).
        #
        # "as dp" gives the library the short name dp, so later lines can say
        # dp.DPxOpen() instead of the full name.
        try:
            from pypixxlib import _libdpx as dp
            pypixxlibInstalled = True
        except ImportError:
            dp = None
            pypixxlibInstalled = False

        # "atexit" is part of Python. It lets us name a function that must run
        # when the program closes, however it closes (see Begin Experiment).
        import atexit
      Begin Experiment:
        # ======================================================================
        # vpixxSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the start dialog closes and the window
        #               opens, before the first routine starts.
        #
        # WHAT IT DOES:
        #   1. decides between the real DATAPixx3 and dummy mode
        #   2. stops the run if the window is not full screen
        #   3. connects to the DATAPixx3
        #   4. makes sure the DATAPixx3 is released when the experiment ends
        #
        # WHERE THE NAMES COME FROM:
        #   expInfo  - Builder: the answers typed into the start dialog.
        #   thisExp  - Builder: the data file. thisExp.addData(name, value)
        #              adds a column to the current row.
        #   win      - Builder: the experiment window.
        #   PILOTING - Builder: True when you press Pilot instead of Run.
        #   logging  - PsychoPy: writes messages to the console and the log.
        #   dp, pypixxlibInstalled, atexit - the Before Experiment tab above.
        #
        # WHY THIS IS IN "Begin Experiment" AND NOT "Before Experiment":
        #   It needs expInfo (was dummy mode ticked?) and win. Builder only
        #   creates those inside its main function, run(), and only the
        #   Begin Experiment tab is placed inside run().
        # ======================================================================

        # ---- 1. Real DATAPixx3 or dummy mode? --------------------------------
        # The "dummy_vpixx" tick box in the start dialog runs the experiment
        # without a DATAPixx3, for testing on any computer: no MEG triggers,
        # and the tone plays through PsychoPy instead (not precisely timed).
        # Comparing its text with 'True' works whether Builder hands the answer
        # over as True or as the text 'True'.
        DUMMY_VPIXX = str(expInfo['dummy_vpixx']) == 'True'

        # Without pypixxlib we can't talk to a DATAPixx3, so force dummy mode
        # and print a loud warning in the Runner window.
        if not pypixxlibInstalled and not DUMMY_VPIXX:
            logging.warning('pypixxlib is not installed, so dummy_vpixx was turned '
                            'on: NO MEG TRIGGERS, and tones are NOT precisely timed')
            DUMMY_VPIXX = True

        # Record the mode in the data file, so a dummy run can't be mistaken for
        # a real one later.
        thisExp.addData('dummy_vpixx', DUMMY_VPIXX)

        # ---- 2. Stop if the window is not full screen ------------------------
        # The DATAPixx3 reads the top-left pixel of the whole SCREEN. If our
        # window is smaller than the screen, that pixel belongs to the desktop,
        # and the MEG trigger lines show whatever colour the desktop has there.
        # Builder's Pilot mode always uses a small window, so it would cause
        # exactly that. win.fullscr is True when the window covers the screen.
        # "raise RuntimeError" stops the experiment with this message.
        if not DUMMY_VPIXX and (PILOTING or not win.fullscr):
            message = ('VPixx Pixel Mode triggers need a FULL-SCREEN window in RUN '
                       'mode. Switch Builder from Pilot to Run, or tick dummy_vpixx '
                       'to test without the DATAPixx3.')
            logging.error(message)
            raise RuntimeError(message)

        # ---- 3. Connect to the DATAPixx3 -------------------------------------
        # How VPixx commands work: most dp.DPx... commands only change a local
        # copy of the DATAPixx3's settings (the "register cache") on the
        # stimulus PC. Nothing reaches the device until that copy is sent with
        # dp.DPxWriteRegCache().
        if not DUMMY_VPIXX:
            dp.DPxOpen()                   # connect over USB
            dp.DPxStopAllScheds()          # stop anything an earlier run left playing
            # Pixel Mode OFF for now. EyeLink calibration and the drift check
            # draw their own screens, and their colours must not reach the MEG
            # as triggers. The triggersOn routine switches it on after the
            # drift check (see triggerSetup).
            dp.DPxDisableDoutPixelMode()
            dp.DPxWriteRegCache()          # send these settings to the device


        # ---- 4. Release the DATAPixx3 when the experiment ends ----------------
        # def creates a function: a named block of code that runs later, when
        # something calls it by name.
        def closeVpixx():
            """Stop the sound, switch Pixel Mode off and disconnect."""
            if DUMMY_VPIXX:
                return                     # nothing to close in dummy mode
            try:
                dp.DPxStopAllScheds()          # stop any sound still playing
                dp.DPxDisableDoutPixelMode()   # stop driving the MEG trigger lines
                dp.DPxWriteRegCache()          # send those changes to the device
                dp.DPxClose()                  # disconnect
            except Exception:
                pass   # the device was already closed or unplugged: nothing to do

        # atexit.register() asks Python to run closeVpixx when the program ends.
        # It runs at a normal finish, after Ctrl-C, and after an error.
        # There is deliberately no "End Experiment" code in this experiment: the
        # EyeLink plugin ends the program itself (after copying the eye-tracking
        # file), before Builder reaches its End Experiment tabs, so code there
        # would never run. atexit still does.
        atexit.register(closeVpixx)
    CodeComponent triggerSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # triggerSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as soon as the experiment starts, before the
        #               window opens.
        #
        # WHAT IT DOES: defines the trigger colours.
        #
        # HOW PIXEL MODE TRIGGERS WORK (read this first):
        #   Each time the screen refreshes (120 times per second here) the
        #   DATAPixx3 looks at ONE pixel: the very top-left pixel of the screen.
        #   In "Pixel Mode B" it reads that pixel's BLUE value (a whole number
        #   from 0 to 255) and puts it out on 8 digital lines, which are
        #   recorded on the MEG trigger channel. Red and green are ignored, so
        #   we always keep them at 0.
        #
        #   Each of these blue values switches on exactly ONE of the 8 lines:
        #       1, 2, 4, 8, 16, 32, 64, 128
        #   Blue = 0 (a black pixel) means all lines are off.
        #
        #   So to "send trigger 2" we colour that one pixel (0, 0, 2) for one
        #   frame, then make it black again. The pixel is far too dark to see.
        #
        #   Colours are written as (red, green, blue), each from 0 to 255.
        # ======================================================================

        # ---- The trigger colours used in this experiment --------------------
        # To add a new trigger, give it one of the unused blue values:
        # 8, 16, 32, 64 or 128.
        TRIG_FIXATION = (0, 0, 1)   # fixation cross appears      -> MEG trigger 1
        TRIG_TONE_L   = (0, 0, 2)   # tone starts, LEFT ear       -> MEG trigger 2
        TRIG_TONE_R   = (0, 0, 4)   # tone starts, RIGHT ear      -> MEG trigger 4
        TRIG_OFF      = (0, 0, 0)   # black pixel                 -> all lines off
      Begin Experiment:
        # ======================================================================
        # triggerSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the window opens, straight after
        #               vpixxSetup's Begin Experiment tab.
        #
        # WHAT IT DOES:
        #   1. creates the 1x1 trigger pixel in the top-left corner
        #   2. defines the functions that colour it, send triggers and read the
        #      DATAPixx3's clock
        #
        # Pixel Mode itself is switched on later, by the triggersOn routine
        # after the drift check, and off on the thanks screen.
        #
        # WHERE THE NAMES COME FROM:
        #   win, thisExp, visual - Builder / PsychoPy (visual draws stimuli).
        #   dp, DUMMY_VPIXX      - vpixxSetup.
        #   TRIG_...             - the Before Experiment tab above.
        # ======================================================================

        # ---- 1. The trigger pixel --------------------------------------------
        # A rectangle 1 pixel wide and 1 pixel high. In pixel units, (0, 0) is
        # the CENTRE of the screen, so the top-left corner is at
        # (-width/2, +height/2). Adding/subtracting 0.5 puts the centre of our
        # 1-pixel square in the middle of that corner pixel.
        #   colorSpace='rgb255' -> colours are (R, G, B) from 0 to 255, exactly
        #                          like the TRIG_ values
        #   lineWidth=0         -> no outline around the square
        #   setAutoDraw(True)   -> PsychoPy redraws it on every frame, in every
        #                          routine, until the experiment ends
        screenWidthPix, screenHeightPix = win.size
        triggerPixel = visual.Rect(
            win,
            units='pix',
            width=1,
            height=1,
            pos=(-screenWidthPix / 2 + 0.5, screenHeightPix / 2 - 0.5),
            colorSpace='rgb255',
            fillColor=TRIG_OFF,
            lineColor=TRIG_OFF,
            lineWidth=0,
            interpolate=False,
            autoLog=False,
        )
        triggerPixel.setAutoDraw(True)


        # ---- 2. Functions used by the other components -----------------------
        def setTriggerPixel(colour):
            """Give the trigger pixel a new colour, e.g. TRIG_FIXATION or TRIG_OFF.
            The change appears at the next screen refresh."""
            triggerPixel.fillColor = colour
            triggerPixel.lineColor = colour


        # The DATAPixx3 clock times saved for the current trial, looked up by
        # name, e.g. vpixxTimes['tone']. trialLog copies them into the trial log.
        # (A "dict", written {key: value, ...}, looks values up by name. {} is
        #  an empty one.)
        vpixxTimes = {}


        def recordVpixxTime(stimName):
            """Save the DATAPixx3's own clock time as the column stimName + '.vp'.
            sendTrigger() arranges for this to run straight after the screen
            refresh that showed the trigger, so the time marks that refresh."""
            if DUMMY_VPIXX:
                return                     # no device, no clock: leave it empty
            dp.DPxUpdateRegCache()         # fetch the device's current state...
            vpixxTimes[stimName] = dp.DPxGetTime()        # ...including its clock
            thisExp.addData(stimName + '.vp', vpixxTimes[stimName])


        def sendTrigger(colour, stimName):
            """Show a trigger colour on the next screen refresh and log it.
            colour   : one of the TRIG_ values, e.g. TRIG_TONE_L
            stimName : what it marks, e.g. 'tone'; names the data columns
                       'tone.trigger' and 'tone.vp'."""
            setTriggerPixel(colour)
            # colour[2] is the third number in (R, G, B): the blue value, which
            # is the trigger number recorded on the MEG.
            thisExp.addData(stimName + '.trigger', colour[2])
            # win.callOnFlip(function, argument) runs the function straight
            # after the next screen refresh, the one that shows this trigger.
            win.callOnFlip(recordVpixxTime, stimName)
    CodeComponent toneSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # toneSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, as soon as the experiment starts, before the
        #               window opens.
        #
        # WHAT IT DOES: sets the tone parameters and makes the tone.
        #
        # HOW THE SOUND IS PLAYED (read this first):
        #   The tone is played by the DATAPixx3, not the stimulus PC's sound
        #   card. The DATAPixx3 has its own memory and its own audio output.
        #     1. At the start of the experiment we copy the tone, once, into the
        #        DATAPixx3's memory (Begin Experiment tab).
        #     2. Each trial we give the DATAPixx3 an "audio schedule": play that
        #        tone, at 48000 samples per second, into the LEFT (or RIGHT)
        #        ear (trialSetup).
        #     3. On the frame the tone should start, we tell it "start", timed
        #        to arrive exactly when the screen refreshes (onsetEvents). The
        #        MEG trigger for the tone is on that same refresh.
        #   The stimulus PC's own audio is far less precise (often 20-60 ms of
        #   unpredictable delay), which is why we use the DATAPixx3 instead.
        #
        # EDIT THE NUMBERS BELOW to change the tone.
        # ======================================================================

        # "numpy" is a maths library for working with long lists of numbers.
        # Builder loads it already, but importing it here makes it clear where
        # "np" comes from.
        import numpy as np

        # ---- The tone --------------------------------------------------------
        toneFreqHz = 1000          # pitch of the tone, in Hz (cycles per second)
        toneDurationSec = 0.100    # how long the tone lasts: 100 ms
        rampSec = 0.010            # 10 ms fade-in and fade-out (avoids clicks)
        sampleRate = 48000         # numbers per second the DATAPixx3 plays
        toneLoudness = 0.8         # 0 to 1: how much of the full range to use
        audioVolume = 0.5          # 0 to 1: DATAPixx3 output volume, both ears

        # Where in the DATAPixx3's memory the tone is stored. 16,000,000 is the
        # address VPixx uses by default for audio. Leave it as it is.
        toneMemoryAddress = 16000000

        # ---- Make the tone ---------------------------------------------------
        # A sound is just a long list of numbers: the position of the
        # loudspeaker at each moment. For a pure tone those numbers follow a
        # sine wave.

        # How many numbers (samples) the tone needs: 0.1 s x 48000 = 4800.
        nSamples = int(round(toneDurationSec * sampleRate))

        # The time of each sample in seconds: 0, 1/48000, 2/48000, ...
        # np.arange(n) makes the list 0, 1, 2, ... n-1.
        sampleTimes = np.arange(nSamples) / sampleRate

        # The sine wave itself, with values from -1 to +1.
        tone = np.sin(2 * np.pi * toneFreqHz * sampleTimes)

        # Fade-in and fade-out. Without them, the sudden start and stop of the
        # wave is heard as a click. "fade" rises smoothly from 0 to 1.
        nRampSamples = int(round(rampSec * sampleRate))           # 480 samples
        fade = 0.5 * (1 - np.cos(np.pi * np.arange(nRampSamples) / nRampSamples))
        tone[:nRampSamples] = tone[:nRampSamples] * fade          # first 10 ms
        tone[-nRampSamples:] = tone[-nRampSamples:] * fade[::-1]  # last 10 ms
        # ([:n] means "the first n values", [-n:] means "the last n values" and
        #  [::-1] means "in reverse order", so the end fades out.)

        # The DATAPixx3 wants whole numbers from -32767 to +32767 (16-bit audio,
        # "int16"), so scale the wave and convert it.
        toneWave = (tone * toneLoudness * 32767).astype(np.int16)
      Begin Experiment:
        # ======================================================================
        # toneSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the window opens, straight after
        #               vpixxSetup and triggerSetup.
        #
        # WHAT IT DOES: turns the DATAPixx3's audio on and copies the tone into
        #               its memory. In dummy mode (no DATAPixx3) it prepares
        #               ordinary PsychoPy sounds instead.
        #
        # WHERE THE NAMES COME FROM:
        #   dp, DUMMY_VPIXX  - vpixxSetup.
        #   toneWave and the tone settings - the Before Experiment tab above.
        #   sound            - PsychoPy's sound module. Builder loads it at the
        #                      top of the script, so it isn't imported here.
        #   logging          - PsychoPy: writes messages to the console and log.
        # ======================================================================

        if not DUMMY_VPIXX:
            # ---- Real DATAPixx3 ----------------------------------------------
            dp.DPxInitAudCodec()               # switch the audio output on
            # The volume starts at 0 (silent!) every time the device is opened,
            # so it must be set here, or every tone plays silently with no error.
            dp.DPxSetAudLeftVolume(audioVolume)
            dp.DPxSetAudRightVolume(audioVolume)
            dp.DPxWriteRegCache()              # send the settings above

            # Copy the tone into the DATAPixx3's memory. This is done once; each
            # trial just replays it.
            dp.DPxWriteAudioBuffer(toneWave, toneMemoryAddress)
            dp.DPxWriteRegCache()

            logging.exp('DATAPixx3 audio ready: %d samples = %.1f ms'
                        % (len(toneWave), 1000 * len(toneWave) / sampleRate))
            # (%d puts a whole number into the text and %.1f a number with one
            #  decimal place, in the order listed after the %.)

        else:
            # ---- Dummy mode ---------------------------------------------------
            # Make two stereo PsychoPy sounds from the same tone: one with the
            # tone in the left channel and silence in the right, and one the
            # other way round. They play in the correct ear, but their timing
            # is NOT precise, so use dummy mode for testing only.
            toneFloat = toneWave / 32767.0        # PsychoPy wants -1 to +1
            silence = np.zeros(len(toneFloat))    # a list of zeros, same length
            # np.column_stack([a, b]) puts two lists side by side as two
            # columns: column 1 = left ear, column 2 = right ear.
            dummySounds = {
                'left':  sound.Sound(np.column_stack([toneFloat, silence]),
                                     sampleRate=sampleRate, stereo=True),
                'right': sound.Sound(np.column_stack([silence, toneFloat]),
                                     sampleRate=sampleRate, stereo=True),
            }
            # dummySounds['left'] is the left-ear sound, dummySounds['right']
            # the right-ear one.
    CodeComponent taskStartMsg
      Code Type = Py
      End Routine:
        # ======================================================================
        # taskStartMsg  |  "End Routine" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the participant presses a button to leave the
        #               instructions screen.
        #
        # WHAT IT DOES: writes the word TASK_START into the eye-tracking data
        #               file (EDF), so the start of the task is easy to find when
        #               you analyse the data.
        #
        # pylink is the eye-tracker library, loaded by the EyeLink Initialize
        # component.
        # ======================================================================

        # Get the connection to the eye tracker.
        el_tracker = pylink.getEYELINK()

        # Write the message into the EDF file.
        el_tracker.sendMessage('TASK_START')
    TextComponent taskInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        Reaction time task

        Keep your eyes on the cross in the centre of the screen.

        On each trial you will hear a short tone in your LEFT or RIGHT ear.

        LEFT ear  ->  LEFT index finger
        RIGHT ear  ->  RIGHT index finger

        Respond as quickly and accurately as you can.

        First, look at the target dot so we can check the eye tracker.

        Press either button when ready.
    KeyboardComponent ready
      allowedKeys = "7","2","space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine eyelinkDriftCheck
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine triggersOn
    RoutineSettingsComponent triggersOn
      desc = Switches VPixx Pixel Mode B on after the drift check
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    CodeComponent pixelModeOn
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # pixelModeOn  |  "Begin Routine" tab  |  routine: triggersOn
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, straight after the drift check, before the first
        #               trial. (triggersOn has nothing to show, so it ends as
        #               soon as this code has run.)
        #
        # WHAT IT DOES: switches the DATAPixx3's Pixel Mode B on. From now on
        #               the top-left pixel's blue value goes to the MEG trigger
        #               lines on every screen refresh.
        #
        # WHY HERE: until now the EyeLink plugin has been drawing its own
        #   calibration and drift-check screens. Whatever colour those put in
        #   the top-left corner would have reached the MEG as junk triggers.
        #   From here on, only this experiment draws, and the trigger pixel is
        #   black except on trigger frames.
        #
        # WHERE THE NAMES COME FROM:
        #   dp, DUMMY_VPIXX           - vpixxSetup.
        #   setTriggerPixel, TRIG_OFF - triggerSetup.
        # ======================================================================

        setTriggerPixel(TRIG_OFF)            # make sure the pixel is black first

        if not DUMMY_VPIXX:
            dp.DPxEnableDoutPixelModeB()     # top-left blue value -> trigger lines
            dp.DPxWriteRegCache()            # send that change to the device
            logging.exp('VPixx Pixel Mode B ON')
  Routine eyelinkStartRecording
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    HostDrawing HostDrawing plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = fixation
      recordStatusMessage = "Trial %d/%d" % (trials.thisN + 1, trials.nTotal)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine trial
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    CodeComponent stimSettings
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # stimSettings  |  "Before Experiment" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, before the experiment window opens.
        #
        # WHAT IT DOES: works out how big the fixation cross should be in PIXELS
        #               (the unit this experiment uses), starting from its size
        #               in DEGREES OF VISUAL ANGLE (the unit papers report).
        #               Same numbers as the other ChoiceRT versions.
        #
        # WHERE IT IS: first in the trial routine so it's the first thing you
        #   see. Its position doesn't affect when it runs: Before Experiment
        #   code always runs before anything is drawn.
        #
        # EDIT THE NUMBERS BELOW if the screen, the viewing distance or the
        # cross size change. The fixation component and the EyeLink Host PC
        # drawing both use the pixel size calculated at the bottom.
        # ======================================================================

        # "math" is Python's built-in maths library. We need it for tan().
        import math

        # ---- The display (MEG lab projector) --------------------------------
        screenWidthCm = 60.6        # width of the image on the screen, in cm
        screenWidthPix = 1920       # number of pixels across the screen
        viewingDistanceCm = 95      # distance from the eyes to the screen, in cm

        # ---- Stimulus size, in degrees of visual angle ----------------------
        fixationSizeDeg = 0.6       # width and height of the central cross

        # ---- Convert degrees to pixels --------------------------------------
        # Step 1: how many centimetres 1 degree covers at the screen centre.
        #   Picture a triangle from the eye to the screen: the viewing distance
        #   is one side, and 1 degree is the angle at the eye. Splitting it into
        #   two halves of 0.5 degree gives two right-angled triangles, so
        #   1 degree spans 2 x distance x tan(0.5 degree) on the screen.
        #   math.radians() converts degrees to radians, which tan() expects.
        cmPerDeg = 2 * viewingDistanceCm * math.tan(math.radians(0.5))   # ~1.66 cm

        # Step 2: how many pixels fit in 1 cm of screen.
        pixPerCm = screenWidthPix / screenWidthCm                        # ~31.7 px

        # Step 3: how many pixels make up 1 degree.
        pixPerDeg = cmPerDeg * pixPerCm                                  # ~52.5 px

        # Step 4: final size in whole pixels. round() turns e.g. 31.5 into 32.
        # The fixation component's Size field is (fixationSizePix, fixationSizePix).
        fixationSizePix = round(fixationSizeDeg * pixPerDeg)             # 32 px
    CodeComponent trialSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # trialSetup  |  "Before Experiment" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, before the experiment window opens.
        #
        # WHAT IT DOES: sets the trial timing, in seconds.
        #
        # A trial runs like this:
        #   blank screen (ITI) -> fixation cross appears -> random wait
        #   (the foreperiod) -> tone -> up to responseWindow seconds to answer.
        #   The cross stays on until the end of the trial.
        #
        # These names are used in the Start/Stop fields of fixation and resp
        # (open each component in Builder to see them).
        # ======================================================================

        ITI = 0.5                  # blank screen at the start of each trial
        foreperiodMin = 0.8        # shortest wait from fixation to tone
        foreperiodMax = 1.5        # longest wait from fixation to tone
        responseWindow = 1.5       # time allowed to answer, from tone onset
      Begin Routine:
        # ======================================================================
        # trialSetup  |  "Begin Routine" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of every trial, before anything is drawn.
        #
        # WHAT IT DOES: picks this trial's random wait, works out when the tone
        #               starts, and gives the DATAPixx3 this trial's audio
        #               schedule (which ear) without starting it yet.
        #
        # WHERE THE NAMES COME FROM:
        #   toneSide - conditions.csv: 'left' or 'right' for this trial. The
        #              trials loop sets one value per trial, in random order.
        #   np, sampleRate, toneWave, toneMemoryAddress - toneSetup.
        #   dp, DUMMY_VPIXX - vpixxSetup.
        #   vpixxTimes      - triggerSetup.
        #
        # WHY IT SITS ABOVE THE fixation AND resp COMPONENTS:
        #   fixation's duration and resp's start time use foreperiod and
        #   toneOnset, so they must be set first. Builder runs components from
        #   top to bottom.
        # ======================================================================

        # A random number between foreperiodMin and foreperiodMax, every value
        # equally likely. Making the wait random stops the participant from
        # predicting when the tone will come.
        foreperiod = np.random.uniform(foreperiodMin, foreperiodMax)
        thisExp.addData('foreperiod', foreperiod)

        # When the tone starts, in seconds from the start of the trial. The
        # resp component starts listening at this time too, so its reaction
        # time (resp.rt) is measured from the tone.
        toneOnset = ITI + foreperiod

        if not DUMMY_VPIXX:
            # The audio schedule: start at once when told (0.0), play at
            # sampleRate, play all the tone's samples, send them to toneSide
            # ('left' or 'right' ear only) and read them from toneMemoryAddress.
            dp.DPxSetAudioSchedule(0.0, sampleRate, len(toneWave), toneSide,
                                   toneMemoryAddress)
            dp.DPxWriteRegCache()   # send it to the DATAPixx3 (not started yet)

        # onsetEvents sets this to True once it has started the tone, so the
        # tone is only started once per trial.
        toneStarted = False

        # Forget last trial's DATAPixx3 clock times. .clear() empties the dict.
        vpixxTimes.clear()
      End Routine:
        # ======================================================================
        # trialSetup  |  "End Routine" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the end of every trial, either after a button press
        #               or when the response window runs out.
        #
        # WHAT IT DOES: 1) works out what happened on this trial;
        #               2) writes a summary of it into the eye-tracking data
        #                  file (EDF).
        #
        # WHERE THE NAMES COME FROM:
        #   resp     - the Keyboard component in this routine.
        #   pylink   - SR Research's eye-tracker library, loaded by the EyeLink
        #              Initialize component.
        #   trials   - Builder: the trials loop. trials.thisN counts from 0.
        #   toneSide - conditions.csv.
        # ======================================================================

        # ---- 1) What happened on this trial? --------------------------------
        # If no button was pressed, resp.keys is empty, and "not resp.keys" is
        # True.
        if not resp.keys:
            timeout = 1          # 1 = no answer before the response window ended
            respKey = 'NA'       # NA = "not available" (nothing was pressed)
            respRT = 'NA'
            respCorr = 0
        else:
            timeout = 0          # 0 = a button was pressed in time
            respKey = resp.keys              # the button pressed: '7' or '2'
            respRT = round(resp.rt, 4)       # reaction time in seconds, timed
                                             # from tone onset, to 4 decimals
            respCorr = resp.corr             # 1 = correct button, 0 = wrong one

        # Save the timeout flag as a column in PsychoPy's data file. (The
        # Keyboard component saves the key, reaction time and accuracy there by
        # itself.)
        thisExp.addData('timeout', timeout)

        # ---- 2) Messages for the eye-tracking data file (EDF) ---------------
        el_tracker = pylink.getEYELINK()

        # One line summarising the trial. In the text below, each %d is replaced
        # by a whole number and each %s by text, in the order listed after the
        # "%" sign. Add 1 to trials.thisN to number trials from 1.
        el_tracker.sendMessage('TRIAL_SUMMARY trial=%d side=%s key=%s rt=%s corr=%d timeout=%d'
                               % (trials.thisN + 1, toneSide, respKey, respRT, respCorr, timeout))

        # Messages that start with "!V TRIAL_VAR" become trial variables in
        # SR Research's Data Viewer program.
        el_tracker.sendMessage('!V TRIAL_VAR timeout %d' % timeout)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (fixationSizePix, fixationSizePix)
      startVal [time (s)] = ITI
      stopVal [duration (s)] = foreperiod + responseWindow
      units = pix
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    KeyboardComponent resp
      allowedKeys = "7","2"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = toneOnset
      stopVal [duration (s)] = responseWindow
      store = first key
      storeCorrect = True
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    CodeComponent onsetEvents
      Code Type = Py
      Each Frame:
        # ======================================================================
        # onsetEvents  |  "Each Frame" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: on every screen refresh ("frame") during the trial, 120
        #               times per second, just before the new frame is shown.
        #
        # WHAT IT DOES:
        #   - when the fixation cross appears: MEG trigger 1
        #   - when the tone is due: MEG trigger 2 (left) or 4 (right), the EDF
        #     message TONE_ONSET_LEFT/RIGHT, and the tone itself, all on the
        #     same screen refresh
        #
        # WHERE IT IS - THIS MATTERS: it must stay BELOW fixation and resp.
        #   On each frame Builder goes through the components from top to
        #   bottom, then refreshes the screen. When the cross is due, the
        #   fixation component switches it on during that pass. Because this
        #   component comes after it, it sees the cross switch on in the SAME
        #   pass, so the trigger and the cross appear on the same refresh.
        #   Moved above fixation, trigger 1 would be one frame (8.3 ms) late.
        #   (The EyeLink MarkEvents component stays at the very bottom.)
        #
        # WHERE THE NAMES COME FROM:
        #   frameN          - Builder: number of the current frame in this
        #                     trial (0, 1, 2, ...).
        #   fixation        - the fixation cross component in this routine.
        #   STARTED         - Builder: the status of a stimulus that is on.
        #   .frameNStart    - Builder: the frame a stimulus appeared on.
        #   tThisFlip       - Builder: the time (from the start of the trial)
        #                     at which the coming frame will appear.
        #   tThisFlipGlobal - Builder: the same moment on PsychoPy's main clock.
        #   frameTolerance  - Builder: a tiny margin (0.001 s), so a frame due
        #                     at exactly toneOnset isn't missed by rounding.
        #   toneOnset, toneStarted - trialSetup.
        #   toneSide        - conditions.csv: 'left' or 'right'.
        #   setTriggerPixel, sendTrigger, TRIG_... - triggerSetup.
        #   dp, DUMMY_VPIXX - vpixxSetup.     dummySounds - toneSetup.
        #   pylink          - the EyeLink plugin.
        # ======================================================================

        # ---- Step 1: start every frame with the trigger pixel black ----------
        # If a trigger was sent on the previous frame, this switches it off, so
        # each trigger lasts exactly one frame (8.3 ms, about 10 MEG samples at
        # 1200 Hz). Steps 2 and 3 override it on an onset frame, because the
        # colour that counts is the last one set before the screen refreshes.
        setTriggerPixel(TRIG_OFF)

        # ---- Step 2: did the fixation cross appear on this frame? -----------
        # Both must be true: the cross is on screen, AND the frame it appeared
        # on is this one. That is true on exactly one frame per trial.
        # (The EyeLink MarkEvents component writes the fixation message to the
        #  EDF by itself.)
        if fixation.status == STARTED and fixation.frameNStart == frameN:
            sendTrigger(TRIG_FIXATION, 'fixation')

        # ---- Step 3: is the tone due on this frame? --------------------------
        # This is the same test Builder uses to start resp, so the tone, its
        # trigger and resp's reaction-time clock all start on the same frame.
        if not toneStarted and tThisFlip >= toneOnset - frameTolerance:

            # a) EDF message. win.callOnFlip(f, x) means "run f(x) straight
            #    after the next frame appears", so the message is timed to the
            #    refresh at which the tone starts. .upper() turns 'left' into
            #    'LEFT'. It is queued first so it is sent first after the flip.
            el_tracker = pylink.getEYELINK()
            win.callOnFlip(el_tracker.sendMessage, 'TONE_ONSET_' + toneSide.upper())

            # b) MEG trigger 2 or 4, on the same refresh. sendTrigger also
            #    saves tone.trigger and, after the refresh, tone.vp.
            if toneSide == 'left':
                sendTrigger(TRIG_TONE_L, 'tone')
            else:
                sendTrigger(TRIG_TONE_R, 'tone')

            # c) The tone. This must be the LAST VPixx command before the
            #    refresh (see the IMPORTANT note below).
            if not DUMMY_VPIXX:
                # Mark the schedule "start" in the local copy of the settings...
                dp.DPxStartAudSched()
                # ...and send it to the DATAPixx3, which holds it until the next
                # screen refresh, the one Builder is about to show. The tone
                # starts exactly then.
                dp.DPxWriteRegCacheAfterVideoSync()
                # IMPORTANT: between these two lines and the screen refresh,
                # nothing may call dp.DPxUpdateRegCache() or dp.DPxWriteRegCache().
                # Either would replace the pending "start". (recordVpixxTime
                # calls DPxUpdateRegCache, but only AFTER the refresh, so it is
                # safe.)
            else:
                # Dummy mode: play the PsychoPy sound when the frame is shown.
                # Note "play" without (): we hand over the function so it can be
                # run later, instead of running it now.
                dummySounds[toneSide].stop()          # in case it's still playing
                win.callOnFlip(dummySounds[toneSide].play)

            # d) The tone's start time on PsychoPy's clock (tone.started).
            toneStartTime = tThisFlipGlobal
            thisExp.addData('tone.started', toneStartTime)

            toneStarted = True   # don't start it again this trial
    CodeComponent trialLog
      Code Type = Py
      Begin Experiment:
        # ======================================================================
        # trialLog  |  "Begin Experiment" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the experiment starts.
        #
        # WHAT IT DOES: creates a simple table with ONE ROW PER TRIAL (the
        #               "trial log"). Columns are separated by tabs, so it opens
        #               in Excel, R, Python, etc. It is saved in this session's
        #               folder under "results", next to the eye-tracking file,
        #               and its name ends in "_trials_log.tsv".
        #
        # There is no "close the file" step at the end. The EyeLink plugin ends
        # the experiment by itself after copying the eye-tracking file, and the
        # log is closed automatically then. Each row is saved as soon as it is
        # written (see the "End Routine" tab), so nothing is lost.
        # ======================================================================

        # thisExp.dataFileName is where PsychoPy saves its own data files,
        # without the file extension. Add our own ending to it.
        logFileName = thisExp.dataFileName + '_trials_log.tsv'

        # The column names, in order. Each row written later (in the
        # "End Routine" tab) must list its values in this same order.
        logColumns = ['participant', 'session', 'date', 'edf_file', 'trial',
                      'eyelink_trialid', 'tone_side', 'corr_ans', 'foreperiod_s',
                      'fixation_onset_s', 'tone_onset_s', 'fixation_vp', 'tone_vp',
                      'resp_key', 'rt_s', 'correct', 'timeout', 'dummy_vpixx']

        # Open the file for writing ('w'), then write the row of column names.
        # '\t'.join(...) puts a tab between the names; '\n' ends the line.
        logFile = open(logFileName, 'w')
        logFile.write('\t'.join(logColumns) + '\n')
      End Routine:
        # ======================================================================
        # trialLog  |  "End Routine" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the end of every trial.
        #
        # WHAT IT DOES: adds one row for this trial to the trial log.
        #
        # WHERE IT IS: below trialSetup, so respKey, respRT, respCorr and
        #   timeout have already been worked out there.
        #
        # WHERE EACH VALUE COMES FROM:
        #   expInfo            - the start dialog (participant, session, date)
        #   session_identifier - the eye-tracking file name plus the start
        #                        time; made by the EyeLink Initialize component
        #   trial_index        - the trial number (TRIALID) the EyeLink plugin
        #                        wrote into the EDF; use it to match each row to
        #                        a trial in the EDF
        #   toneSide, corrAns  - this trial's row of conditions.csv
        #   fixation.tStartRefresh - when the cross appeared, in seconds on
        #                        PsychoPy's clock (0 = start of the experiment)
        #   toneStartTime      - when the tone started, same clock (onsetEvents)
        #   vpixxTimes         - DATAPixx3 clock times (triggerSetup). .get()
        #                        gives None if there is no value (dummy mode).
        # ======================================================================

        # The values for this row, in the same order as logColumns.
        rowValues = [
            expInfo['participant'],
            expInfo['session'],
            expInfo['date'],
            session_identifier + '.EDF',          # the eye-tracking file
            trials.thisN + 1,                     # trial number, counting from 1
            trial_index,                          # TRIALID in the EDF
            toneSide,                             # 'left' or 'right'
            corrAns,                              # the correct button
            round(foreperiod, 4),                 # wait before the tone (s)
            round(fixation.tStartRefresh, 4),     # when the cross appeared (s)
            round(toneStartTime, 4),              # when the tone started (s)
            vpixxTimes.get('fixation', 'NA'),     # DATAPixx3 clock at the cross
            vpixxTimes.get('tone', 'NA'),         # DATAPixx3 clock at the tone
            respKey,                              # button pressed, or NA
            respRT,                               # reaction time (s), or NA
            respCorr,                             # 1 = correct, 0 = wrong or none
            timeout,                              # 1 = no response in time
            int(DUMMY_VPIXX),                     # 1 = no DATAPixx3 (test run)
        ]

        # Turn every value into text, put tabs between them, and write the row.
        logFile.write('\t'.join(str(value) for value in rowValues) + '\n')

        # flush() saves the row to disk straight away, so the log is complete
        # even if the experiment is stopped early with Ctrl-C.
        logFile.flush()
    MarkEvents MarkEvents plugin="psychopy-eyelink"
      componentsForEyeLinkRespEventMessages = resp
      componentsForEyeLinkStimEventMessages = fixation
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 20
      interestAreaShape = Ellipse
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = toneSide,corrAns,foreperiod
      useQuitKeys = True
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  Routine eyelinkStopRecording
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine thanks
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    CodeComponent pixelModeOff
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # pixelModeOff  |  "Begin Routine" tab  |  routine: thanks
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the final "thank you" screen appears.
        #
        # WHAT IT DOES: switches Pixel Mode off, so nothing drawn from here on
        #               (including the screens the EyeLink plugin shows while
        #               it copies the eye-tracking file) can reach the MEG as a
        #               trigger.
        #
        # dp and DUMMY_VPIXX come from vpixxSetup; setTriggerPixel and TRIG_OFF
        # from triggerSetup. The DATAPixx3 itself is closed by closeVpixx
        # (vpixxSetup) when the program ends.
        # ======================================================================

        setTriggerPixel(TRIG_OFF)

        if not DUMMY_VPIXX:
            dp.DPxDisableDoutPixelMode()     # stop driving the MEG trigger lines
            dp.DPxWriteRegCache()            # send that change to the device
            logging.exp('VPixx Pixel Mode B OFF')
    CodeComponent taskEndMsg
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # taskEndMsg  |  "Begin Routine" tab  |  routine: thanks
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the final "thank you" screen appears.
        #
        # WHAT IT DOES: writes TASK_END into the eye-tracking data file (EDF) to
        #               mark the end of the task.
        # ======================================================================
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TASK_END')
    TextComponent endScreen
      letterHeight = 36
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = pix
      wrapWidth = 1500
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      text:
        All done - thank you!

        Please stay still while we save the data.
Flow
  Routine eyelinkSetup
  Routine instruct
  Routine eyelinkDriftCheck
  Routine triggersOn
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('toneSide', 'left'), ('corrAns', '7')]),
      OrderedDict([('toneSide', 'right'), ('corrAns', '2')])]
    Routine eyelinkStartRecording
    Routine trial
    Routine eyelinkStopRecording
  LoopTerminator trials
  Routine thanks
