PsychoPy2experiment version="2026.2.3"
Settings
  Audio lib = ptb
  Data filename = os.path.join(session_folder, '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date']))
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = ChoiceRT_EyeLink
  frameRate = 120
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine eyelinkSetup
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    CodeComponent elConfig
      Code Type = Py
      Begin Routine:
        # --- EyeLink 1000 Plus, Remote Mode, 500 Hz (MEG lab) ---
        # The Initialize component (below) has already connected to the Host PC.
        # Remote mode itself (camera mount / "Desktop - Remote" configuration and the
        # forehead target sticker) is selected on the Host PC Set Options screen.
        el_tracker = pylink.getEYELINK()
        if not dummy_mode:
            el_tracker.setOfflineMode()
            # sampling rate: Remote mode on the 1000 Plus runs at up to 500 Hz
            el_tracker.sendCommand("sample_rate 500")
            # Uncomment to force the camera configuration from the script instead of
            # the Host PC (RTABLER = desktop mount, remote, monocular)
            # el_tracker.sendCommand("elcl_select_configuration = RTABLER")
            el_tracker.sendMessage("SESSION_CONFIG remote_mode sample_rate_500")
    TextComponent elInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        Eye tracker setup

        Please keep your head still and look at the screen.

        We will now calibrate the eye tracker: follow the dot with your eyes and look at its centre until it moves.

        (Experimenter: press SPACE to enter Camera Setup.
        Enter = camera image, C = calibrate, V = validate, O = continue to the task.)
    KeyboardComponent key_setup
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = False
      hostAddress = 100.1.1.1
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV13
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetSize = 24
      targetType = picture
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  Routine instruct
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    CodeComponent taskStartMsg
      Code Type = Py
      End Routine:
        # custom EDF message marking the start of the task (sent before the drift check)
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TASK_START')
    TextComponent taskInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        Reaction time task

        Keep your eyes on the cross in the centre of the screen.

        A white dot will appear on the LEFT or RIGHT.

        LEFT dot  ->  LEFT index finger
        RIGHT dot  ->  RIGHT index finger

        Respond as quickly and accurately as you can.

        First, look at the target dot so we can check the eye tracker.

        Press either button when ready.
    KeyboardComponent ready
      allowedKeys = "7","2","space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine eyelinkDriftCheck
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine eyelinkStartRecording
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    HostDrawing HostDrawing plugin="psychopy-eyelink"
      additionalDrawCommands = 'draw_box %d %d %d %d 2' % (scn_width/2.0 - targetEccPix - targetSizePix/2.0, scn_height/2.0 - targetSizePix/2.0, scn_width/2.0 - targetEccPix + targetSizePix/2.0, scn_height/2.0 + targetSizePix/2.0); 'draw_box %d %d %d %d 2' % (scn_width/2.0 + targetEccPix - targetSizePix/2.0, scn_height/2.0 - targetSizePix/2.0, scn_width/2.0 + targetEccPix + targetSizePix/2.0, scn_height/2.0 + targetSizePix/2.0)
      componentsForDrawingToHostBackdrop = fixation
      recordStatusMessage = "Trial %d/%d" % (trials.thisN + 1, trials.nTotal)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine trial
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    CodeComponent trialCode
      Code Type = Py
      Before Experiment:
        # Display geometry: 1920x1080 px, 60.6 cm wide, 95 cm viewing distance
        # 1 deg of visual angle ~= 52.5 px
        pxPerDeg = 52.534
        targetEccPix = 315    # 6 deg left/right of fixation
        targetSizePix = 79   # 1.5 deg diameter
      Begin Experiment:
        # ---- trial-by-trial log: <data file name>_trials_log.tsv (in the session results folder) ----
        rtLogPath = thisExp.dataFileName + '_trials_log.tsv'
        rtLogCols = ['participant', 'session', 'date', 'edf_file', 'trial',
                     'eyelink_trialid', 'target_side', 'target_x_pix', 'corr_ans',
                     'foreperiod_s', 'fixation_onset_s', 'target_onset_s', 'resp_key', 'rt_s',
                     'correct', 'timeout']
        os.makedirs(os.path.dirname(os.path.abspath(rtLogPath)), exist_ok=True)
        rtLogFile = open(rtLogPath, 'w', encoding='utf-8')
        rtLogFile.write('\t'.join(rtLogCols) + '\n')
        rtLogFile.flush()
      Begin Routine:
        # jittered foreperiod (fixation -> target), uniform 0.8-1.5 s
        foreperiod = 0.8 + random() * 0.7
        thisExp.addData('foreperiod', foreperiod)
      End Experiment:
        rtLogFile.close()
      End Routine:
        # behavioural summary in the PsychoPy data file
        if resp.keys in ('', [], None):
            respKey, respRT, respCorr, timeout = 'None', -1, 0, 1
        else:
            respKey, respRT, respCorr, timeout = resp.keys, resp.rt, resp.corr, 0
        thisExp.addData('resp.timeout', timeout)

        # custom EDF messages (MarkEvents also logs resp RT/keys/corr as TRIAL_VARs)
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TRIAL_SUMMARY trial=%d side=%s key=%s rt=%.4f corr=%d timeout=%d'
                               % (trials.thisN + 1, targetSide, respKey, respRT, respCorr, timeout))
        el_tracker.sendMessage('!V TRIAL_VAR timeout %d' % timeout)

        # one row in the trial log (flushed every trial so an aborted run keeps its rows)
        def _fmt(x, nd=4):
            return 'NA' if x is None else ('%.*f' % (nd, x) if isinstance(x, float) else str(x))
        rtLogRow = [expInfo['participant'], expInfo['session'], expInfo['date'],
                    session_identifier + '.EDF', trials.thisN + 1, trial_index, targetSide, int(targetX * targetEccPix), corrAns,
                    _fmt(foreperiod), _fmt(fixation.tStartRefresh), _fmt(target.tStartRefresh),
                    respKey if not timeout else 'NA', _fmt(respRT) if not timeout else 'NA',
                    respCorr, timeout]
        rtLogFile.write('\t'.join(_fmt(v) for v in rtLogRow) + '\n')
        rtLogFile.flush()
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (32, 32)
      startVal [time (s)] = 0.2
      units = pix
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    PolygonComponent target
      fillColor = white
      pos [set every repeat] = (targetX * targetEccPix, 0)
      shape = circle
      size = (targetSizePix, targetSizePix)
      startVal [time (s)] = 0.2 + foreperiod
      stopVal [duration (s)] = 1.5
      units = pix
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    KeyboardComponent resp
      allowedKeys = "7","2"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.2 + foreperiod
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent elMessages
      Code Type = Py
      Begin Routine:
        el_tracker = pylink.getEYELINK()
        targetMsgSent = False
      Each Frame:
        # This component sits below the target, so on the frame the target is set to
        # STARTED the message is queued for the same flip that first draws it.
        if not targetMsgSent and target.status == STARTED:
            win.callOnFlip(el_tracker.sendMessage, 'TARGET_ONSET_%s' % targetSide.upper())
            targetMsgSent = True
    MarkEvents MarkEvents plugin="psychopy-eyelink"
      componentsForEyeLinkRespEventMessages = resp
      componentsForEyeLinkStimEventMessages = fixation,target
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 20
      interestAreaShape = Ellipse
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = targetSide,targetX,corrAns,foreperiod
      useQuitKeys = True
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  Routine eyelinkStopRecording
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine thanks
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    CodeComponent taskEndMsg
      Code Type = Py
      Begin Routine:
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TASK_END')
    TextComponent endScreen
      letterHeight = 36
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = pix
      wrapWidth = 1500
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      text:
        All done - thank you!

        Please stay still while we save the data.
Flow
  Routine eyelinkSetup
  Routine instruct
  Routine eyelinkDriftCheck
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('targetSide', 'left'), ('targetX', -1), ('corrAns', '7')]),
      OrderedDict([('targetSide', 'right'), ('targetX', 1), ('corrAns', '2')])]
    Routine eyelinkStartRecording
    Routine trial
    Routine eyelinkStopRecording
  LoopTerminator trials
  Routine thanks
