PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'dummy_vpixx': False}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = [-1, -1, -1]
  expName = ChoiceRT_VPixxAudio
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instruct
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    CodeComponent vpixxAudioSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # vpixxAudioSetup  |  "Before Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, before the experiment window opens.
        #
        # WHAT IT DOES: sets the tone parameters, makes the tone, and loads the
        #               VPixx library.
        #
        # HOW THE SOUND IS PLAYED (read this first):
        #   The tone is not played by the stimulus PC's sound card. It is played
        #   by the DATAPixx3, VPixx's box that sits between the PC and the
        #   display. The DATAPixx3 has its own memory and its own audio output.
        #     1. At the start of the experiment we copy the tone, once, into the
        #        DATAPixx3's memory.
        #     2. Each trial we give the DATAPixx3 an "audio schedule": play that
        #        tone, at 48000 samples per second, into the LEFT (or RIGHT) ear.
        #     3. On the frame the tone should start, we tell it "start", timed
        #        to arrive exactly when the screen refreshes. That way we know
        #        the tone started at that screen refresh, to well under 1 ms.
        #   The stimulus PC's own audio is far less precise (often 20-60 ms of
        #   unpredictable delay), which is why we use the DATAPixx3 instead.
        #
        # This experiment uses NO MEG triggers, NO Pixel Mode and NO eye
        # tracking. Tone times are saved to the data file only.
        #
        # EDIT THE NUMBERS BELOW to change the tone.
        # ======================================================================

        # "numpy" is a maths library for working with long lists of numbers.
        # Builder loads it already, but importing it here makes it clear where
        # "np" comes from.
        import numpy as np

        # "atexit" is part of Python. It lets us name a function that must run
        # when the program closes, however it closes (see Begin Experiment).
        import atexit

        # ---- The tone --------------------------------------------------------
        toneFreqHz = 1000          # pitch of the tone, in Hz (cycles per second)
        toneDurationSec = 0.100    # how long the tone lasts: 100 ms
        rampSec = 0.010            # 10 ms fade-in and fade-out (avoids clicks)
        sampleRate = 48000         # numbers per second the DATAPixx3 plays
        toneLoudness = 0.8         # 0 to 1: how much of the full range to use
        audioVolume = 0.5          # 0 to 1: DATAPixx3 output volume, both ears

        # Where in the DATAPixx3's memory the tone is stored. 16,000,000 is the
        # address VPixx uses by default for audio. Leave it as it is.
        toneMemoryAddress = 16000000

        # ---- Make the tone ---------------------------------------------------
        # A sound is just a long list of numbers: the position of the
        # loudspeaker at each moment. For a pure tone those numbers follow a
        # sine wave.

        # How many numbers (samples) the tone needs: 0.1 s x 48000 = 4800.
        nSamples = int(round(toneDurationSec * sampleRate))

        # The time of each sample in seconds: 0, 1/48000, 2/48000, ...
        # np.arange(n) makes the list 0, 1, 2, ... n-1.
        sampleTimes = np.arange(nSamples) / sampleRate

        # The sine wave itself, with values from -1 to +1.
        tone = np.sin(2 * np.pi * toneFreqHz * sampleTimes)

        # Fade-in and fade-out. Without them, the sudden start and stop of the
        # wave is heard as a click. "fade" rises smoothly from 0 to 1.
        nRampSamples = int(round(rampSec * sampleRate))           # 480 samples
        fade = 0.5 * (1 - np.cos(np.pi * np.arange(nRampSamples) / nRampSamples))
        tone[:nRampSamples] = tone[:nRampSamples] * fade          # first 10 ms
        tone[-nRampSamples:] = tone[-nRampSamples:] * fade[::-1]  # last 10 ms
        # ([:n] means "the first n values", [-n:] means "the last n values" and
        #  [::-1] means "in reverse order", so the end fades out.)

        # The DATAPixx3 wants whole numbers from -32767 to +32767 (16-bit audio,
        # "int16"), so scale the wave and convert it.
        toneWave = (tone * toneLoudness * 32767).astype(np.int16)

        # ---- Load the VPixx library -----------------------------------------
        # "pypixxlib" is VPixx's Python library for talking to the DATAPixx3.
        # try/except ImportError means: try to load it, and if it isn't
        # installed on this computer, carry on without it instead of crashing.
        # Begin Experiment then switches to dummy mode (no DATAPixx3).
        try:
            from pypixxlib import _libdpx as dp
            pypixxlibInstalled = True
        except ImportError:
            dp = None
            pypixxlibInstalled = False
      Begin Experiment:
        # ======================================================================
        # vpixxAudioSetup  |  "Begin Experiment" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, after the start dialog and after the window opens.
        #
        # WHAT IT DOES: connects to the DATAPixx3, turns its audio on, copies the
        #               tone into its memory, and makes sure the connection is
        #               closed when the experiment ends. In dummy mode (no
        #               DATAPixx3) it prepares ordinary PsychoPy sounds instead.
        #
        # WHERE THE NAMES COME FROM:
        #   expInfo  - Builder: the answers typed into the start dialog.
        #   thisExp  - Builder: the data file. thisExp.addData(name, value)
        #              adds a column to the current row.
        #   logging  - PsychoPy: writes messages to the console and the log.
        #   win      - Builder: the experiment window.
        #   dp, pypixxlibInstalled, toneWave and the tone settings - the
        #              Before Experiment tab above.
        #
        # WHY THIS IS IN "Begin Experiment" AND NOT "Before Experiment":
        #   It needs expInfo (to know whether dummy mode was ticked) and win.
        #   Builder only creates those inside its main function, run(), and
        #   only the Begin Experiment tab is placed inside run().
        # ======================================================================

        # ---- Dummy mode? -----------------------------------------------------
        # The "dummy_vpixx" tick box in the start dialog runs the experiment
        # without a DATAPixx3, for testing on any computer. bool() turns the
        # tick box answer into True or False.
        DUMMY_VPIXX = bool(expInfo['dummy_vpixx'])

        # Without pypixxlib we can't talk to a DATAPixx3, so force dummy mode.
        if not pypixxlibInstalled and not DUMMY_VPIXX:
            logging.warning('pypixxlib is not installed, so dummy_vpixx was turned '
                            'on: tones play through PsychoPy and are NOT precisely timed')
            DUMMY_VPIXX = True

        # Record the mode in the data file, so a dummy run can't be mistaken
        # for a real one later.
        thisExp.addData('dummy_vpixx', DUMMY_VPIXX)

        if not DUMMY_VPIXX:
            # ---- Real DATAPixx3 ----------------------------------------------
            # How VPixx commands work: most dp.DPx... commands only change a
            # local copy of the DATAPixx3's settings (the "register cache") on
            # the stimulus PC. Nothing reaches the device until we send that
            # copy with dp.DPxWriteRegCache().
            dp.DPxOpen()                       # connect over USB
            dp.DPxStopAllScheds()              # stop anything left playing
            dp.DPxInitAudCodec()               # switch the audio output on
            # The volume starts at 0 (silent!) every time the device is opened,
            # so it must be set here, or every tone plays silently with no error.
            dp.DPxSetAudLeftVolume(audioVolume)
            dp.DPxSetAudRightVolume(audioVolume)
            dp.DPxWriteRegCache()              # send the settings above

            # Copy the tone into the DATAPixx3's memory. This is done once; each
            # trial just replays it.
            dp.DPxWriteAudioBuffer(toneWave, toneMemoryAddress)
            dp.DPxWriteRegCache()

            logging.exp('DATAPixx3 audio ready: %d samples = %.1f ms'
                        % (len(toneWave), 1000 * len(toneWave) / sampleRate))
            # (%d puts a whole number into the text and %.1f a number with one
            #  decimal place, in the order listed after the %.)

            # ---- Close the connection when the experiment ends ------------------
            def closeVpixx():
                # Stop playback and disconnect from the DATAPixx3.
                dp.DPxStopAllScheds()
                dp.DPxWriteRegCache()
                dp.DPxClose()

            # atexit.register() means: run closeVpixx when the program ends.
            # It runs whether the experiment finishes normally or you press Esc.
            # (There is deliberately no "End Experiment" code: Builder skips the
            #  End Experiment tab when you press Esc, so cleanup there would not
            #  always run.)
            atexit.register(closeVpixx)

        else:
            # ---- Dummy mode ---------------------------------------------------
            # Make two stereo PsychoPy sounds from the same tone: one with the
            # tone in the left channel and silence in the right, and one the
            # other way round. They play in the correct ear, but their timing
            # is NOT precise, so use dummy mode for testing only.
            # ("sound" is PsychoPy's sound module. Builder loads it at the top
            #  of the script, so it isn't imported again here.)
            toneFloat = toneWave / 32767.0        # PsychoPy wants -1 to +1
            silence = np.zeros(len(toneFloat))    # a list of zeros, same length
            # np.column_stack([a, b]) puts two lists side by side as two
            # columns: column 1 = left ear, column 2 = right ear.
            dummySounds = {
                'left':  sound.Sound(np.column_stack([toneFloat, silence]),
                                     sampleRate=sampleRate, stereo=True),
                'right': sound.Sound(np.column_stack([silence, toneFloat]),
                                     sampleRate=sampleRate, stereo=True),
            }
            # (A "dict", written {key: value, ...}, looks values up by name:
            #  dummySounds['left'] is the left-ear sound.)


        # ---- Save the DATAPixx3 clock at the tone's start ----------------------
        # def creates a function: a named block of code we can run later.
        # This one is not run now. toneStart (trial routine) hands it to
        # win.callOnFlip(), which runs it straight after the screen refresh at
        # which the tone starts.
        def saveToneTime():
            if not DUMMY_VPIXX:
                dp.DPxUpdateRegCache()   # fetch the device's current state...
                thisExp.addData('tone.vp', dp.DPxGetTime())   # ...and its clock
    TextComponent taskInstructions
      letterHeight = 32
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 1400
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      text:
        On each trial you will hear a short tone in your LEFT or RIGHT ear.

        Tone in the LEFT ear: press with your LEFT index finger.
        Tone in the RIGHT ear: press with your RIGHT index finger.

        Respond as quickly and accurately as you can, and keep your eyes on the cross.

        Press either button to start.
    KeyboardComponent ready
      allowedKeys = '7', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent stimSettings
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # stimSettings  |  "Before Experiment" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, before the experiment window opens.
        #
        # WHAT IT DOES: works out how big the fixation cross should be in PIXELS
        #               (the unit this experiment uses), starting from its size
        #               in DEGREES OF VISUAL ANGLE (the unit papers report).
        #               Same numbers as the two visual versions of this task.
        #
        # EDIT THE NUMBERS BELOW if the screen, the viewing distance or the
        # cross size change.
        # ======================================================================

        # "math" is Python's built-in maths library. We need it for tan().
        import math

        # ---- The display (MEG lab projector) --------------------------------
        screenWidthCm = 60.6        # width of the image on the screen, in cm
        screenWidthPix = 1920       # number of pixels across the screen
        viewingDistanceCm = 95      # distance from the eyes to the screen, in cm

        # ---- Stimulus size, in degrees of visual angle ----------------------
        fixationSizeDeg = 0.6       # width and height of the central cross

        # ---- Convert degrees to pixels --------------------------------------
        # 1 degree covers 2 * distance * tan(0.5 degrees) centimetres of screen.
        # math.radians() converts degrees to radians, which tan() expects.
        cmPerDeg = 2 * viewingDistanceCm * math.tan(math.radians(0.5))

        # How many pixels fit in 1 cm of screen.
        pixPerCm = screenWidthPix / screenWidthCm

        # How many pixels make up 1 degree (about 52.5 with the numbers above).
        pixPerDeg = cmPerDeg * pixPerCm

        # Final size in pixels. round() gives a whole number of pixels.
        # The fixation component's Size field is (fixationSizePix, fixationSizePix).
        fixationSizePix = round(fixationSizeDeg * pixPerDeg)    # 32 px
    CodeComponent trialSetup
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # trialSetup  |  "Before Experiment" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, before the experiment window opens.
        #
        # WHAT IT DOES: sets the trial timing, in seconds.
        #
        # A trial: fixation cross on -> wait ITI + foreperiod -> tone -> up to
        # responseWindow seconds to answer. The cross stays on the whole time.
        # ======================================================================

        ITI = 0.5                  # fixed part of the wait before the tone
        foreperiodMin = 0.8        # plus a random extra wait between these two
        foreperiodMax = 1.5        #   values, so the tone can't be predicted
        responseWindow = 1.5       # time allowed to answer, from tone onset

        # (The wait is split into ITI + foreperiod only so the timing and the
        #  "foreperiod" data column match the two visual versions of this task,
        #  where the ITI was a blank screen.)
      Begin Routine:
        # ======================================================================
        # trialSetup  |  "Begin Routine" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of every trial, before anything is drawn.
        #
        # WHAT IT DOES: picks this trial's random wait, works out when the tone
        #               starts, and gives the DATAPixx3 this trial's audio
        #               schedule (which ear) without starting it yet.
        #
        # WHERE THE NAMES COME FROM:
        #   toneSide - conditions.csv: 'left' or 'right' for this trial. The
        #              trials loop sets one value per trial, in random order.
        #   np       - numpy (vpixxAudioSetup).
        #   DUMMY_VPIXX, dp, sampleRate, toneWave, toneMemoryAddress
        #            - vpixxAudioSetup.
        #
        # WHY IT SITS ABOVE THE fixation AND resp COMPONENTS:
        #   fixation's duration and resp's start time use toneOnset, so
        #   toneOnset must be set first. Builder runs components top to bottom.
        # ======================================================================

        # A random number between foreperiodMin and foreperiodMax.
        foreperiod = np.random.uniform(foreperiodMin, foreperiodMax)
        thisExp.addData('foreperiod', foreperiod)

        # When the tone starts, in seconds from the start of the trial. The
        # resp component starts listening at this time too, so its reaction
        # time (resp.rt) is measured from the tone.
        toneOnset = ITI + foreperiod

        if not DUMMY_VPIXX:
            # The audio schedule: start at once when told (0.0), play at
            # sampleRate, play all the tone's samples, send them to toneSide
            # ('left' or 'right' ear only) and read them from toneMemoryAddress.
            dp.DPxSetAudioSchedule(0.0, sampleRate, len(toneWave), toneSide,
                                   toneMemoryAddress)
            dp.DPxWriteRegCache()   # send it to the DATAPixx3 (not started yet)

        # toneStart (below) sets this to True once it has started the tone, so
        # the tone is only started once per trial.
        toneStarted = False
      End Routine:
        # ======================================================================
        # trialSetup  |  "End Routine" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the end of every trial.
        #
        # WHAT IT DOES: marks trials with no answer.
        #
        # resp.keys is the key that was pressed. If nothing was pressed it is
        # empty, and "not resp.keys" is True.
        # ======================================================================

        if not resp.keys:
            thisExp.addData('timeout', 1)   # no answer in time
        else:
            thisExp.addData('timeout', 0)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (fixationSizePix, fixationSizePix)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = toneOnset + responseWindow
      units = pix
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    KeyboardComponent resp
      allowedKeys = '7', '2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = toneOnset
      stopVal [duration (s)] = responseWindow
      store = first key
      storeCorrect = True
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    CodeComponent toneStart
      Code Type = Py
      Each Frame:
        # ======================================================================
        # toneStart  |  "Each Frame" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: on every screen refresh ("frame", 120 per second),
        #               just before the new frame is shown.
        #
        # WHAT IT DOES: on the frame the tone is due, tells the DATAPixx3 to
        #               start the tone at the moment that frame appears.
        #
        # WHERE THE NAMES COME FROM:
        #   tThisFlip       - Builder: the time (from the start of the trial)
        #                     at which the coming frame will appear.
        #   tThisFlipGlobal - Builder: the same moment on PsychoPy's main clock.
        #   frameTolerance  - Builder: a tiny margin (0.001 s), so a frame due
        #                     at exactly toneOnset isn't missed by rounding.
        #   toneOnset, toneStarted, toneSide - trialSetup.
        #   saveToneTime, dummySounds, DUMMY_VPIXX, dp - vpixxAudioSetup.
        #
        # WHERE IT SITS: below resp. Its position doesn't change the timing:
        #   everything in Each Frame runs before the frame is shown. The test
        #   below is the same one Builder uses to start resp, so the tone and
        #   resp's reaction-time clock start on the same frame.
        # ======================================================================

        if not toneStarted and tThisFlip >= toneOnset - frameTolerance:

            if not DUMMY_VPIXX:
                # Mark the schedule "start" in the local copy of the settings...
                dp.DPxStartAudSched()
                # ...and send it to the DATAPixx3, which holds it until the next
                # screen refresh, the one Builder is about to show. The tone
                # starts exactly then.
                dp.DPxWriteRegCacheAfterVideoSync()
                # IMPORTANT: between these two lines and the screen refresh,
                # nothing may call dp.DPxUpdateRegCache(). It would replace the
                # local copy with the device's state and erase the "start".
            else:
                # Dummy mode: play the PsychoPy sound when the frame is shown.
                # win.callOnFlip(f) means "run f straight after the next frame
                # appears". Note "play" without (): we hand over the function
                # so it can be run later, instead of running it now.
                dummySounds[toneSide].stop()          # in case it's still playing
                win.callOnFlip(dummySounds[toneSide].play)

            # After the frame appears, save the DATAPixx3's clock (tone.vp).
            win.callOnFlip(saveToneTime)

            # Save the tone's start time on PsychoPy's clock (tone.started).
            thisExp.addData('tone.started', tThisFlipGlobal)

            toneStarted = True   # don't start it again this trial
  Routine thanks
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    TextComponent thanksText
      letterHeight = 32
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
      wrapWidth = 1400
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      text:
        Thank you!

        The task is complete.
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict({'toneSide': 'left', 'corrAns': np.int64(7)}),
      OrderedDict({'toneSide': 'right', 'corrAns': np.int64(2)})]
    Routine trial
  LoopTerminator trials
  Routine thanks
