PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'dummy_vpixx': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = [-1, -1, -1]
  expName = ChoiceRT_VPixxPixelMode
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instruct
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    CodeComponent vpixx
      Code Type = Py
      Before Experiment:
        # =====================================================================
        # VPixx Pixel Mode B triggers (MEG lab)
        # ---------------------------------------------------------------------
        # A 1x1 px patch in the upper-left corner carries the trigger value in
        # its BLUE channel (red = green = 0). At each vsync the DATAPixx3 reads
        # that pixel and puts the value on its digital output -> MEG trigger
        # channel. 8 lines available: 1, 2, 4, 8, 16, 32, 64, 128.
        #
        # Trigger pixel colours are written literally as (R, G, B) in 0-255
        # (the patch uses colorSpace='rgb255'). Only blue carries the trigger.
        #   TRIG_FIXATION   (0, 0, 1)   fixation cross onset (every trial)
        #   TRIG_TARGET_L   (0, 0, 2)   target onset, LEFT
        #   TRIG_TARGET_R   (0, 0, 4)   target onset, RIGHT
        #   TRIG_RESET      (0, 0, 0)   black = all trigger lines low
        #   spare blue values: 8, 16, 32, 64, 128
        #
        # Each onset trigger is held for TRIG_HOLD_FRAMES video frames and then
        # the pixel is reset to black (0). The trigger edge marks the vsync at
        # which the display BEGINS scanning out the new frame.
        # =====================================================================
        import atexit

        TRIG_FIXATION = (0, 0, 1)
        TRIG_TARGET_L = (0, 0, 2)
        TRIG_TARGET_R = (0, 0, 4)
        TRIG_RESET = (0, 0, 0)
        TRIG_HOLD_FRAMES = 1   # 1 frame = 8.33 ms at 120 Hz (~10 samples at 1200 Hz)

        # pypixxlib is imported here; if it is missing the experiment falls back
        # to dummy mode (no triggers sent, *.vp columns left empty).
        try:
            from pypixxlib import _libdpx as _real_dp
            _HAS_PYPIXXLIB = True
        except ImportError:
            _real_dp = None
            _HAS_PYPIXXLIB = False


        class _MockDPx:
            """No-op stand-in for pypixxlib._libdpx (dummy mode)."""
            def __getattr__(self, name):
                if name == 'DPxGetTime':
                    return lambda: 0.0
                return lambda *a, **k: None
      Begin Experiment:
        # NOTE: Builder runs this tab INSIDE run(), where win, thisExp and expInfo
        # live. The VPixx helpers are therefore defined here (not in Before
        # Experiment) so they can see dp, win, thisExp and trigger_patch.

        # ---- connect to the DATAPixx3 (or fall back to dummy mode) ----
        DUMMY_VPIXX = str(expInfo.get('dummy_vpixx', False)).lower() in ('true', '1', 'yes')
        if not _HAS_PYPIXXLIB and not DUMMY_VPIXX:
            logging.warning('pypixxlib not installed: forcing dummy VPixx mode (NO TRIGGERS)')
            DUMMY_VPIXX = True
        dp = _MockDPx() if DUMMY_VPIXX else _real_dp
        _vpx = {'closed': False, 'frames_left': 0}


        def init_vpixx():
            dp.DPxOpen()
            dp.DPxStopAllScheds()
            dp.DPxEnableDoutPixelModeB()   # blue-channel trigger output
            dp.DPxWriteRegCache()


        def close_vpixx():
            # Disable pixel mode and disconnect (safe to call more than once).
            if _vpx['closed']:
                return
            _vpx['closed'] = True
            for fn in ('DPxStopAllScheds', 'DPxDisableDoutPixelMode',
                       'DPxWriteRegCache', 'DPxClose'):
                try:
                    getattr(dp, fn)()
                except Exception:
                    pass


        def _set_patch(rgb):
            # rgb is an (R, G, B) tuple in 0-255; the patch is in 'rgb255' space
            trigger_patch.fillColor = rgb
            trigger_patch.lineColor = rgb


        def _stamp_vp(label):
            # Runs right after the flip that showed the trigger: VPixx clock time.
            if DUMMY_VPIXX:
                return
            dp.DPxUpdateRegCache()
            thisExp.addData(label + '.vp', dp.DPxGetTime())


        def send_trigger(rgb, label=None):
            # Put the (R, G, B) colour `rgb` on the trigger pixel for the NEXT flip,
            # then auto-reset. Blue = trigger value on the MEG trigger channel.
            # Call from Each Frame on the frame a stimulus starts
            # (frameNStart == frameN) so the trigger shares the stimulus flip.
            _set_patch(rgb)
            _vpx['frames_left'] = TRIG_HOLD_FRAMES
            if label:
                thisExp.addData(label + '.trigger', rgb[2])   # blue = trigger value
                win.callOnFlip(_stamp_vp, label)


        def tick_trigger():
            # Call FIRST in Each Frame: resets the pixel to black after the hold.
            if _vpx['frames_left'] > 0:
                _vpx['frames_left'] -= 1
                if _vpx['frames_left'] == 0:
                    _set_patch(TRIG_RESET)


        def reset_trigger():
            # Force the pixel to black (call in Begin Routine of every routine).
            _vpx['frames_left'] = 0
            _set_patch(TRIG_RESET)


        # Pixel Mode reads the top-left pixel of the whole SCREEN. If the window is
        # not full screen (e.g. Builder's Pilot mode forces an 800x600 window), that
        # pixel belongs to the desktop and the trigger lines show garbage. Refuse to
        # run with real hardware unless the window is full screen in Run mode.
        if not DUMMY_VPIXX and (PILOTING or not win.fullscr):
            msg = ('VPixx Pixel Mode triggers need a FULL-SCREEN window in RUN mode '
                   '(PILOTING=%s, fullscr=%s). Switch Builder from Pilot to Run, or '
                   'tick dummy_vpixx to test without triggers.' % (PILOTING, win.fullscr))
            logging.error(msg)
            raise RuntimeError(msg)

        init_vpixx()
        atexit.register(close_vpixx)   # also closes the device if the run aborts
        thisExp.addData('dummy_vpixx', DUMMY_VPIXX)

        # ---- 1x1 px trigger patch, exact upper-left screen pixel ----
        _ww, _wh = win.size
        trigger_patch = visual.Rect(
            win, units='pix', width=1, height=1,
            pos=(-_ww / 2.0 + 0.5, _wh / 2.0 - 0.5),
            lineWidth=0, colorSpace='rgb255',
            fillColor=TRIG_RESET, lineColor=TRIG_RESET,
            interpolate=False, autoLog=False)
        trigger_patch.setAutoDraw(True)   # drawn on every flip for the whole session
      Begin Routine:
        reset_trigger()
      Each Frame:
        tick_trigger()
      End Experiment:
        # black trigger pixel, pixel mode off, device closed
        reset_trigger()
        trigger_patch.setAutoDraw(False)
        close_vpixx()
    TextComponent taskInstructions
      letterHeight = 32
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 1400
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      text:
        Reaction time task

        Keep your eyes on the cross in the centre of the screen.

        A white dot will appear on the LEFT or RIGHT.

        LEFT dot  ->  LEFT index finger
        RIGHT dot  ->  RIGHT index finger

        Respond as quickly and accurately as you can.

        Press either button to start.
    KeyboardComponent ready
      allowedKeys = '7', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (32, 32)
      startVal [time (s)] = ITI
      stopVal [duration (s)] = foreperiod + RESP_DEADLINE
      units = pix
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    PolygonComponent target
      fillColor = white
      pos [set every repeat] = (targetX * targetEccPix, 0)
      shape = circle
      size = (targetSizePix, targetSizePix)
      startVal [time (s)] = ITI + foreperiod
      stopVal [duration (s)] = RESP_DEADLINE
      units = pix
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    KeyboardComponent resp
      allowedKeys = '7', '2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = ITI + foreperiod
      stopVal [duration (s)] = RESP_DEADLINE
      store = first key
      storeCorrect = True
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    CodeComponent trialCode
      Code Type = Py
      Before Experiment:
        # ---- display geometry: 1920x1080 px, 60.6 cm wide, 95 cm away ----
        import math
        SCREEN_W_PX, SCREEN_W_CM, VIEW_DIST_CM = 1920, 60.6, 95.0
        PIX_PER_DEG = SCREEN_W_PX / (2 * math.degrees(math.atan(SCREEN_W_CM / 2 / VIEW_DIST_CM)))
        targetEccPix = round(6.0 * PIX_PER_DEG)    # 6 deg left/right of centre
        targetSizePix = round(1.5 * PIX_PER_DEG)   # 1.5 deg diameter

        # ---- timing (s) ----
        ITI = 0.5                       # blank screen before the fixation cross
        FOREPERIOD_MIN, FOREPERIOD_MAX = 0.8, 1.5
        RESP_DEADLINE = 1.5             # target + response window
      Begin Routine:
        foreperiod = FOREPERIOD_MIN + random() * (FOREPERIOD_MAX - FOREPERIOD_MIN)
        thisExp.addData('foreperiod', foreperiod)
        reset_trigger()
      Each Frame:
        # Pixel Mode B onset triggers. This component sits AFTER the stimuli, so on
        # the frame a stimulus starts (frameNStart == frameN) the trigger is drawn
        # on the same flip; tick_trigger() returns the pixel to black next frame.
        tick_trigger()
        if fixation.status == STARTED and fixation.frameNStart == frameN:
            send_trigger(TRIG_FIXATION, 'fixation')
        if target.status == STARTED and target.frameNStart == frameN:
            send_trigger(TRIG_TARGET_L if targetSide == 'left' else TRIG_TARGET_R, 'target')
      End Routine:
        reset_trigger()
        timeout = int(resp.keys in ('', [], None))
        thisExp.addData('timeout', timeout)
  Routine thanks
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    TextComponent thanksText
      letterHeight = 32
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
      wrapWidth = 1400
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      text:
        Thank you!

        The task is complete.
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict({'targetSide': 'left', 'targetX': np.int64(-1), 'corrAns': np.int64(7)}),
      OrderedDict({'targetSide': 'right', 'targetX': np.int64(1), 'corrAns': np.int64(2)})]
    Routine trial
  LoopTerminator trials
  Routine thanks
