PsychoPy2experiment version="2026.2.3"
Settings
  Audio lib = ptb
  Data filename = os.path.join(session_folder, '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date']))
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = ChoiceRT_EyeLink
  frameRate = 120
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine eyelinkSetup
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    CodeComponent elConfig
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # elConfig  |  "Begin Routine" tab  |  routine: eyelinkSetup
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, at the start of the eyelinkSetup routine, before
        #               the eye tracker is calibrated.
        #
        # WHAT IT DOES: sets the eye tracker to record 500 samples per second
        #               (500 Hz). In Remote Mode, 500 Hz is the fastest rate the
        #               EyeLink 1000 Plus can record.
        #
        # WHERE THE NAMES COME FROM:
        #   pylink     - SR Research's Python library for controlling the eye
        #                tracker. The EyeLink "Initialize" component in this
        #                routine loads it, so you don't have to import it.
        #   dummy_mode - True or False, also created by the Initialize component.
        #                True means "no eye tracker is connected, just pretend".
        #                Use it to test the experiment on a computer with no
        #                tracker. Turn it on with the "Dummy Mode" tick box on
        #                the Initialize component.
        # ======================================================================

        # Get the connection to the eye tracker. The Initialize component opened
        # it when the experiment started.
        el_tracker = pylink.getEYELINK()

        # Only send settings when a real eye tracker is connected.
        if not dummy_mode:
            # Put the tracker in "offline" mode (idle, not recording). Its
            # settings can only be changed while it is offline.
            el_tracker.setOfflineMode()

            # Record at 500 samples per second.
            el_tracker.sendCommand("sample_rate 500")

            # Remote Mode itself (no chin rest; a small target sticker on the
            # participant's forehead) is chosen on the EyeLink Host PC, under
            # "Set Options". To choose it from this experiment instead, delete
            # the "#" at the start of the next line.
            # RTABLER means: desktop mount, remote mode, one eye.
            # el_tracker.sendCommand("elcl_select_configuration = RTABLER")

            # Write a note into the eye-tracking data file (the "EDF" file) so
            # anyone analysing it later can see which settings were used.
            el_tracker.sendMessage("SESSION_CONFIG remote_mode sample_rate_500")
    TextComponent elInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        Eye tracker setup

        Please keep your head still and look at the screen.

        We will now calibrate the eye tracker: follow the dot with your eyes and look at its centre until it moves.

        (Experimenter: press SPACE to enter Camera Setup.
        Enter = camera image, C = calibrate, V = validate, O = continue to the task.)
    KeyboardComponent key_setup
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = False
      hostAddress = 100.1.1.1
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV13
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetSize = 24
      targetType = picture
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  Routine instruct
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    CodeComponent taskStartMsg
      Code Type = Py
      End Routine:
        # ======================================================================
        # taskStartMsg  |  "End Routine" tab  |  routine: instruct
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the participant presses a button to leave the
        #               instructions screen.
        #
        # WHAT IT DOES: writes the word TASK_START into the eye-tracking data
        #               file (EDF), so the start of the task is easy to find when
        #               you analyse the data.
        #
        # pylink is the eye-tracker library, loaded by the EyeLink Initialize
        # component.
        # ======================================================================

        # Get the connection to the eye tracker.
        el_tracker = pylink.getEYELINK()

        # Write the message into the EDF file.
        el_tracker.sendMessage('TASK_START')
    TextComponent taskInstructions
      letterHeight = 36
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 1500
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      text:
        Reaction time task

        Keep your eyes on the cross in the centre of the screen.

        A white dot will appear on the LEFT or RIGHT.

        LEFT dot  ->  LEFT index finger
        RIGHT dot  ->  RIGHT index finger

        Respond as quickly and accurately as you can.

        First, look at the target dot so we can check the eye tracker.

        Press either button when ready.
    KeyboardComponent ready
      allowedKeys = "7","2","space"
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine eyelinkDriftCheck
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine eyelinkStartRecording
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    HostDrawing HostDrawing plugin="psychopy-eyelink"
      additionalDrawCommands = 'draw_box %d %d %d %d 2' % (scn_width/2.0 - targetEccPix - targetSizePix/2.0, scn_height/2.0 - targetSizePix/2.0, scn_width/2.0 - targetEccPix + targetSizePix/2.0, scn_height/2.0 + targetSizePix/2.0); 'draw_box %d %d %d %d 2' % (scn_width/2.0 + targetEccPix - targetSizePix/2.0, scn_height/2.0 - targetSizePix/2.0, scn_width/2.0 + targetEccPix + targetSizePix/2.0, scn_height/2.0 + targetSizePix/2.0)
      componentsForDrawingToHostBackdrop = fixation
      recordStatusMessage = "Trial %d/%d" % (trials.thisN + 1, trials.nTotal)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine trial
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    CodeComponent stimSettings
      Code Type = Py
      Before Experiment:
        # ======================================================================
        # stimSettings  |  "Before Experiment" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, before the experiment window opens.
        #
        # WHAT IT DOES: works out how big the stimuli should be, and where they
        #               go, in PIXELS (the unit this experiment uses), starting
        #               from sizes in DEGREES OF VISUAL ANGLE (the unit papers
        #               report).
        #
        # EDIT THE NUMBERS BELOW if the screen, the viewing distance or the
        # stimulus sizes change. The fixation, target and Host PC drawing all
        # use the pixel values calculated at the bottom.
        # ======================================================================

        # "math" is Python's built-in maths library. We need it for tan().
        import math

        # ---- The display (MEG lab projector) --------------------------------
        screenWidthCm = 60.6        # width of the image on the screen, in cm
        screenWidthPix = 1920       # number of pixels across the screen
        viewingDistanceCm = 95      # distance from the eyes to the screen, in cm

        # ---- Stimulus sizes, in degrees of visual angle ---------------------
        fixationSizeDeg = 0.6       # width and height of the central cross
        targetSizeDeg = 1.5         # diameter of the target dot
        targetEccDeg = 6.0          # distance of the target from the centre
                                    # (the same distance on the left and right)

        # ---- Convert degrees to pixels --------------------------------------
        # 1 degree covers 2 * distance * tan(0.5 degrees) centimetres of screen.
        # math.radians() converts degrees to radians, which tan() expects.
        cmPerDeg = 2 * viewingDistanceCm * math.tan(math.radians(0.5))

        # How many pixels fit in 1 cm of screen.
        pixPerCm = screenWidthPix / screenWidthCm

        # How many pixels make up 1 degree (about 52.5 with the numbers above).
        pixPerDeg = cmPerDeg * pixPerCm

        # Final sizes in pixels. round() gives a whole number of pixels.
        fixationSizePix = round(fixationSizeDeg * pixPerDeg)   # 32 px
        targetSizePix = round(targetSizeDeg * pixPerDeg)       # 79 px
        targetEccPix = round(targetEccDeg * pixPerDeg)         # 315 px
    CodeComponent trialSetup
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # trialSetup  |  "Begin Routine" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of EVERY trial, before anything is drawn.
        #
        # WHAT IT DOES: picks a random waiting time (the "foreperiod") between
        #               the fixation cross appearing and the target appearing.
        #               Making it random stops the participant from predicting
        #               when the target will come.
        # ======================================================================

        # random() gives a random number between 0 and 1, so
        # 0.8 + random() * 0.7 gives a number between 0.8 and 1.5 (seconds).
        foreperiod = 0.8 + random() * 0.7

        # Save the foreperiod as a column called "foreperiod" in PsychoPy's own
        # data file.
        thisExp.addData('foreperiod', foreperiod)

        # NOTE: the "target" and "resp" components use this value in their Start
        # time ("0.2 + foreperiod"). That is why this component sits ABOVE them
        # in the routine: it has to run first.
      End Routine:
        # ======================================================================
        # trialSetup  |  "End Routine" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the end of EVERY trial, either after a button press
        #               or after 1.5 s with no response.
        #
        # WHAT IT DOES: 1) works out what happened on this trial;
        #               2) writes a summary of it into the eye-tracking data
        #                  file (EDF).
        # ======================================================================

        # ---- 1) What happened on this trial? --------------------------------
        # "resp" is the Keyboard component that records the button press.
        # If no button was pressed, resp.keys is empty, and "not resp.keys" is
        # True.
        if not resp.keys:
            timeout = 1          # 1 = no response before the 1.5 s deadline
            respKey = 'NA'       # NA = "not available" (nothing was pressed)
            respRT = 'NA'
            respCorr = 0
        else:
            timeout = 0          # 0 = a button was pressed in time
            respKey = resp.keys              # the button pressed: '7' or '2'
            respRT = round(resp.rt, 4)       # reaction time in seconds, timed
                                             # from target onset, to 4 decimals
            respCorr = resp.corr             # 1 = correct button, 0 = wrong one

        # Save the timeout flag as a column in PsychoPy's data file. (The
        # Keyboard component saves the key, reaction time and accuracy there by
        # itself.)
        thisExp.addData('resp.timeout', timeout)

        # ---- 2) Messages for the eye-tracking data file (EDF) ---------------
        el_tracker = pylink.getEYELINK()

        # One line summarising the trial. In the text below, each %d is replaced
        # by a whole number and each %s by text, in the order listed after the
        # "%" sign.
        #   trials.thisN counts trials from 0, so add 1 to number them from 1.
        #   targetSide comes from conditions.csv ('left' or 'right').
        el_tracker.sendMessage('TRIAL_SUMMARY trial=%d side=%s key=%s rt=%s corr=%d timeout=%d'
                               % (trials.thisN + 1, targetSide, respKey, respRT, respCorr, timeout))

        # Messages that start with "!V TRIAL_VAR" become trial variables in
        # SR Research's Data Viewer program.
        el_tracker.sendMessage('!V TRIAL_VAR timeout %d' % timeout)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (fixationSizePix, fixationSizePix)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = foreperiod + 1.5
      units = pix
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    PolygonComponent target
      fillColor = white
      pos [set every repeat] = (targetX * targetEccPix, 0)
      shape = circle
      size = (targetSizePix, targetSizePix)
      startVal [time (s)] = 0.2 + foreperiod
      stopVal [duration (s)] = 1.5
      units = pix
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    KeyboardComponent resp
      allowedKeys = "7","2"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.2 + foreperiod
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent targetOnsetMsg
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # targetOnsetMsg  |  "Begin Routine" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the start of every trial.
        #
        # WHAT IT DOES: notes that the target-onset message has not been sent yet
        #               on this trial. (The "Each Frame" tab sends it.)
        # ======================================================================
        targetMsgSent = False
      Each Frame:
        # ======================================================================
        # targetOnsetMsg  |  "Each Frame" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: on EVERY screen refresh during the trial (120 times a
        #               second on a 120 Hz display).
        #
        # WHAT IT DOES: writes TARGET_ONSET_LEFT or TARGET_ONSET_RIGHT into the
        #               eye-tracking data file at the exact moment the target
        #               appears on the screen.
        #
        # HOW IT WORKS:
        #   - When the target's start time arrives, PsychoPy sets target.status
        #     to STARTED and draws the target. The target becomes visible at the
        #     next screen refresh, which PsychoPy calls a "flip".
        #   - win.callOnFlip(...) asks PsychoPy to run something at that flip,
        #     so the message is timed to the moment the target really appears.
        #   - This component must sit BELOW the target in the routine, so that
        #     target.status has already been updated on the current frame.
        #   - targetMsgSent makes sure the message is sent only once per trial.
        # ======================================================================
        if target.status == STARTED and not targetMsgSent:
            el_tracker = pylink.getEYELINK()

            # Build the message text. .upper() turns 'left' into 'LEFT'.
            messageText = 'TARGET_ONSET_' + targetSide.upper()

            # Send the message at the moment of the next screen flip.
            win.callOnFlip(el_tracker.sendMessage, messageText)

            # Remember that it has been sent, so it isn't sent again this trial.
            targetMsgSent = True
    CodeComponent trialLog
      Code Type = Py
      Begin Experiment:
        # ======================================================================
        # trialLog  |  "Begin Experiment" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the experiment starts.
        #
        # WHAT IT DOES: creates a simple table with ONE ROW PER TRIAL (the
        #               "trial log"). Columns are separated by tabs, so it opens
        #               in Excel, R, Python, etc. It is saved in this session's
        #               folder under "results", next to the eye-tracking file,
        #               and its name ends in "_trials_log.tsv".
        #
        # There is no "close the file" step at the end. The EyeLink plugin ends
        # the experiment by itself after copying the eye-tracking file, and the
        # log is closed automatically then. Each row is saved as soon as it is
        # written (see the "End Routine" tab), so nothing is lost.
        # ======================================================================

        # thisExp.dataFileName is where PsychoPy saves its own data files,
        # without the file extension. Add our own ending to it.
        logFileName = thisExp.dataFileName + '_trials_log.tsv'

        # The column names, in order. Each row written later (in the
        # "End Routine" tab) must list its values in this same order.
        logColumns = ['participant', 'session', 'date', 'edf_file', 'trial',
                      'eyelink_trialid', 'target_side', 'target_x_pix', 'corr_ans',
                      'foreperiod_s', 'fixation_onset_s', 'target_onset_s',
                      'resp_key', 'rt_s', 'correct', 'timeout']

        # Open the file for writing ('w'), then write the row of column names.
        # '\t'.join(...) puts a tab between the names; '\n' ends the line.
        logFile = open(logFileName, 'w')
        logFile.write('\t'.join(logColumns) + '\n')
      End Routine:
        # ======================================================================
        # trialLog  |  "End Routine" tab  |  routine: trial
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: at the end of every trial.
        #
        # WHAT IT DOES: adds one row for this trial to the trial log.
        #
        # This component sits BELOW trialSetup, so respKey, respRT, respCorr and
        # timeout have already been worked out there.
        #
        # WHERE EACH VALUE COMES FROM:
        #   expInfo            - the dialog box shown when the experiment starts
        #                        (participant number, session)
        #   session_identifier - the eye-tracking file name plus the start
        #                        time; made by the EyeLink Initialize component
        #   trial_index        - the trial number (TRIALID) that the EyeLink
        #                        plugin wrote into the eye-tracking file; use it
        #                        to match each row to a trial in the EDF
        #   targetSide, targetX, corrAns - this trial's row of conditions.csv
        #   fixation.tStartRefresh, target.tStartRefresh - when the cross and
        #                        the target appeared on screen, in seconds on
        #                        PsychoPy's clock (which starts at 0 when the
        #                        experiment starts)
        # ======================================================================

        # The values for this row, in the same order as logColumns.
        rowValues = [
            expInfo['participant'],
            expInfo['session'],
            expInfo['date'],
            session_identifier + '.EDF',          # the eye-tracking file
            trials.thisN + 1,                     # trial number, counting from 1
            trial_index,                          # TRIALID in the EDF
            targetSide,                           # 'left' or 'right'
            targetX * targetEccPix,               # -315 = left, 315 = right
            corrAns,                              # the correct button
            round(foreperiod, 4),                 # waiting time before target (s)
            round(fixation.tStartRefresh, 4),     # when the cross appeared (s)
            round(target.tStartRefresh, 4),       # when the target appeared (s)
            respKey,                              # button pressed, or NA
            respRT,                               # reaction time (s), or NA
            respCorr,                             # 1 = correct, 0 = wrong or none
            timeout,                              # 1 = no response in time
        ]

        # Turn every value into text, put tabs between them, and write the row.
        logFile.write('\t'.join(str(value) for value in rowValues) + '\n')

        # flush() saves the row to disk straight away, so the log is complete
        # even if the experiment is stopped early with Ctrl-C.
        logFile.flush()
    MarkEvents MarkEvents plugin="psychopy-eyelink"
      componentsForEyeLinkRespEventMessages = resp
      componentsForEyeLinkStimEventMessages = fixation,target
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 20
      interestAreaShape = Ellipse
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = targetSide,targetX,corrAns,foreperiod
      useQuitKeys = True
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  Routine eyelinkStopRecording
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine thanks
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    CodeComponent taskEndMsg
      Code Type = Py
      Begin Routine:
        # ======================================================================
        # taskEndMsg  |  "Begin Routine" tab  |  routine: thanks
        # ----------------------------------------------------------------------
        # WHEN IT RUNS: once, when the final "thank you" screen appears.
        #
        # WHAT IT DOES: writes TASK_END into the eye-tracking data file (EDF) to
        #               mark the end of the task.
        # ======================================================================
        el_tracker = pylink.getEYELINK()
        el_tracker.sendMessage('TASK_END')
    TextComponent endScreen
      letterHeight = 36
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = pix
      wrapWidth = 1500
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      text:
        All done - thank you!

        Please stay still while we save the data.
Flow
  Routine eyelinkSetup
  Routine instruct
  Routine eyelinkDriftCheck
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('targetSide', 'left'), ('targetX', -1), ('corrAns', '7')]),
      OrderedDict([('targetSide', 'right'), ('targetX', 1), ('corrAns', '2')])]
    Routine eyelinkStartRecording
    Routine trial
    Routine eyelinkStopRecording
  LoopTerminator trials
  Routine thanks
