PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'dummy_vpixx': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = [-1, -1, -1]
  expName = ChoiceRT_VPixxPixelMode
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instruct
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    CodeComponent vpixxSetup
      Code Type = Py
      Before Experiment:
        # =====================================================================
        # vpixxSetup  -  "Before Experiment" tab
        # =====================================================================
        # WHEN THIS RUNS: once, as soon as the experiment starts, before the
        #   participant dialog box appears and before the window opens.
        # WHAT IT DOES: (1) defines the trigger colours, (2) loads VPixx's
        #   Python library, pypixxlib.
        # WHERE IT IS: in the instruct routine only because a code component has
        #   to live in some routine. The "Experiment" tabs run once per session
        #   no matter which routine they are in.
        #
        # ---------------------------------------------------------------------
        # HOW PIXEL MODE TRIGGERS WORK (read this first)
        # ---------------------------------------------------------------------
        # The DATAPixx3 box sits between the stimulus PC and the projector, so
        # every frame the PC draws passes through it. Each time the screen
        # refreshes (120 times per second here) the DATAPixx3 looks at ONE
        # pixel: the very top-left pixel of the screen.
        #
        # In "Pixel Mode B" it reads that pixel's BLUE value (a whole number
        # from 0 to 255) and puts it out on 8 digital lines. Those lines are
        # recorded on the MEG trigger channel. The red and green values are
        # ignored, so we always keep them at 0.
        #
        # Each of these blue values switches on exactly ONE of the 8 lines:
        #     1, 2, 4, 8, 16, 32, 64, 128
        # Blue = 0 (a black pixel) means all lines are off.
        #
        # So to "send trigger 2" we colour that one pixel (0, 0, 2) for one
        # frame, then make it black again. The pixel is far too dark to see.
        #
        # Colours are written as (red, green, blue), each from 0 to 255.
        # ---------------------------------------------------------------------

        # --- The trigger colours used in this experiment ---------------------
        # To add a new trigger, give it one of the unused blue values:
        # 8, 16, 32, 64 or 128.
        TRIG_FIXATION = (0, 0, 1)   # fixation cross appears   -> MEG trigger 1
        TRIG_TARGET_L = (0, 0, 2)   # target appears on LEFT   -> MEG trigger 2
        TRIG_TARGET_R = (0, 0, 4)   # target appears on RIGHT  -> MEG trigger 4
        TRIG_OFF      = (0, 0, 0)   # black pixel              -> all lines off

        # --- Load VPixx's library --------------------------------------------
        # "try / except ImportError" means: try to load pypixxlib; if it is not
        # installed on this computer, do not crash - remember that it is
        # missing instead. vpixxSetup's Begin Experiment tab then switches to
        # dummy mode (no hardware, no triggers) and prints a warning.
        #
        # "as dp" gives the library the short name dp, so later lines can say
        # dp.DPxOpen() instead of typing the full name each time.
        try:
            from pypixxlib import _libdpx as dp
            PYPIXXLIB_INSTALLED = True
        except ImportError:
            dp = None
            PYPIXXLIB_INSTALLED = False

        # atexit is a standard Python module. It lets us register a function
        # that Python runs automatically when the experiment quits (see the
        # Begin Experiment tab, step 4).
        import atexit
      Begin Experiment:
        # =====================================================================
        # vpixxSetup  -  "Begin Experiment" tab
        # =====================================================================
        # WHEN THIS RUNS: once, after the participant dialog box is closed and
        #   the window has opened, before the first routine starts.
        # WHAT IT DOES:
        #   1. decides between real hardware and dummy mode
        #   2. stops the run if the window is not full screen
        #   3. connects to the DATAPixx3 and turns on Pixel Mode B
        #   4. makes sure the DATAPixx3 is released when the experiment quits
        #   5. creates the 1x1 trigger pixel
        #   6. defines the two functions the trial routine uses to send triggers
        #
        # WHY THIS CODE IS HERE AND NOT IN "Before Experiment":
        #   Builder puts this tab inside a function called run(). The window
        #   (win), the data file (thisExp) and the dialog answers (expInfo) only
        #   exist inside run(), so any code that uses them has to live here.
        #
        # NAMES USED HERE THAT COME FROM ELSEWHERE:
        #   win, thisExp, expInfo, PILOTING, logging, visual  -> created by Builder
        #   dp, PYPIXXLIB_INSTALLED, atexit, TRIG_...         -> vpixxSetup's
        #                                                        Before Experiment tab
        # =====================================================================

        # --- Step 1: real hardware or dummy mode? ----------------------------
        # expInfo holds the answers typed into the dialog box at the start.
        # The dummy_vpixx box arrives as True or False. Comparing its text with
        # 'True' works whether Builder hands it over as True or as 'True'.
        DUMMY_VPIXX = str(expInfo['dummy_vpixx']) == 'True'

        # Without pypixxlib we cannot talk to the hardware, so force dummy mode
        # and print a loud warning in the Runner window.
        if not PYPIXXLIB_INSTALLED and not DUMMY_VPIXX:
            logging.warning('pypixxlib is not installed: running in dummy mode, '
                            'NO TRIGGERS WILL BE SENT')
            DUMMY_VPIXX = True

        # Save the mode in the data file so you can tell a dummy run apart later.
        thisExp.addData('dummy_vpixx', DUMMY_VPIXX)

        # --- Step 2: stop if the window is not full screen -------------------
        # The DATAPixx3 reads the top-left pixel of the whole SCREEN. If our
        # window is smaller than the screen, that pixel belongs to the desktop,
        # and the trigger lines show whatever colour the desktop has there.
        # Builder's Pilot mode always uses a small window, so it would cause
        # exactly that. PILOTING is True in Pilot mode; win.fullscr is True when
        # the window covers the whole screen. "raise RuntimeError" stops the
        # experiment with this message.
        if not DUMMY_VPIXX and (PILOTING or not win.fullscr):
            message = ('VPixx Pixel Mode triggers need a FULL-SCREEN window in RUN '
                       'mode. Switch Builder from Pilot to Run, or tick dummy_vpixx '
                       'to test without triggers.')
            logging.error(message)
            raise RuntimeError(message)

        # --- Step 3: connect to the DATAPixx3 and turn on Pixel Mode B -------
        # pypixxlib changes settings in a copy kept on this PC (the "register
        # cache"). Nothing reaches the device until DPxWriteRegCache() sends
        # that copy over USB.
        if not DUMMY_VPIXX:
            dp.DPxOpen()                    # connect to the DATAPixx3 over USB
            dp.DPxStopAllScheds()           # stop anything an earlier script left running
            dp.DPxEnableDoutPixelModeB()    # Pixel Mode B: top-left blue value -> trigger lines
            dp.DPxWriteRegCache()           # send these settings to the device


        # --- Step 4: release the DATAPixx3 when the experiment quits ---------
        # "def" defines a function: a named block of code that runs later,
        # each time something calls it by name.
        def close_vpixx():
            """Turn Pixel Mode off and disconnect from the DATAPixx3."""
            if DUMMY_VPIXX:
                return                      # nothing to close in dummy mode
            try:
                dp.DPxDisableDoutPixelMode()    # stop driving the trigger lines
                dp.DPxWriteRegCache()           # send that change to the device
                dp.DPxClose()                   # disconnect
            except Exception:
                pass    # the device was already closed or unplugged: nothing to do

        # atexit.register() asks Python to run close_vpixx when the experiment
        # quits. This happens both at a normal end AND when you press Esc.
        # That is why there is no "End Experiment" code: Builder skips
        # End Experiment code when Esc is pressed, but atexit still runs.
        atexit.register(close_vpixx)

        # --- Step 5: create the trigger pixel --------------------------------
        # A rectangle 1 pixel wide and 1 pixel high. In pixel units, (0, 0) is
        # the CENTRE of the screen, so the top-left corner is at
        # (-width/2, +height/2). Adding/subtracting 0.5 puts the centre of our
        # 1-pixel square in the middle of that corner pixel.
        #   colorSpace='rgb255' -> colours are given as (R, G, B) from 0 to 255,
        #                          exactly like the TRIG_ values
        #   lineWidth=0         -> no outline around the square
        #   setAutoDraw(True)   -> PsychoPy redraws it on every frame, in every
        #                          routine, until the experiment ends
        screen_width, screen_height = win.size
        trigger_pixel = visual.Rect(
            win,
            units='pix',
            width=1,
            height=1,
            pos=(-screen_width / 2 + 0.5, screen_height / 2 - 0.5),
            colorSpace='rgb255',
            fillColor=TRIG_OFF,
            lineColor=TRIG_OFF,
            lineWidth=0,
            interpolate=False,
            autoLog=False,
        )
        trigger_pixel.setAutoDraw(True)


        # --- Step 6: functions the trial routine uses ------------------------
        def set_trigger_pixel(colour):
            """Give the trigger pixel a new colour, e.g. TRIG_FIXATION or TRIG_OFF.

            The change appears at the next screen refresh (the next win.flip()).
            """
            trigger_pixel.fillColor = colour
            trigger_pixel.lineColor = colour


        def record_vpixx_time(column_name):
            """Save the DATAPixx3's own clock time in the data file.

            send_trigger() arranges for this to run immediately after the screen
            refresh that showed the trigger, so the time stamps the trigger.
            """
            if DUMMY_VPIXX:
                return                          # no device, no clock: leave the cell empty
            dp.DPxUpdateRegCache()              # fetch fresh values from the device (incl. its clock)
            thisExp.addData(column_name, dp.DPxGetTime())


        def send_trigger(colour, stim_name):
            """Show a trigger colour on the next screen refresh and log it.

            colour    : one of the TRIG_ values, e.g. TRIG_TARGET_L
            stim_name : the stimulus it belongs to, e.g. 'target'; used to name
                        the data file columns 'target.trigger' and 'target.vp'
            """
            set_trigger_pixel(colour)
            # colour[2] is the third number in (R, G, B): the blue value, which
            # is the trigger number recorded on the MEG.
            thisExp.addData(stim_name + '.trigger', colour[2])
            # win.callOnFlip(function, argument) runs the function right after
            # the next screen refresh, the one that shows this trigger.
            win.callOnFlip(record_vpixx_time, stim_name + '.vp')
    TextComponent taskInstructions
      letterHeight = 32
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 1400
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      text:
        Reaction time task

        Keep your eyes on the cross in the centre of the screen.

        A white dot will appear on the LEFT or RIGHT.

        LEFT dot  ->  LEFT index finger
        RIGHT dot  ->  RIGHT index finger

        Respond as quickly and accurately as you can.

        Press either button to start.
    KeyboardComponent ready
      allowedKeys = '7', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent stimSettings
      Code Type = Py
      Before Experiment:
        # =====================================================================
        # stimSettings  -  "Before Experiment" tab
        # =====================================================================
        # WHEN THIS RUNS: once, when the experiment starts.
        # WHAT IT DOES: turns stimulus sizes in degrees of visual angle into
        #   pixels, because the experiment draws in pixel units.
        # WHERE IT IS: first in the trial routine so it is the first thing you
        #   see. Its position does not affect when it runs: Before Experiment
        #   code always runs before anything is drawn.
        #
        # EDIT HERE if the screen, the viewing distance or the stimulus sizes
        # change. Everything below the line is worked out from these numbers.
        # =====================================================================

        # --- Display (MEG lab) -------------------------------------------------
        SCREEN_WIDTH_PX = 1920        # horizontal resolution, pixels
        SCREEN_WIDTH_CM = 60.6        # width of the visible image, cm
        VIEWING_DISTANCE_CM = 95.0    # eye to screen, cm

        # --- Stimulus sizes, degrees of visual angle ---------------------------
        FIXATION_SIZE_DEG = 0.6       # width and height of the fixation cross
        TARGET_SIZE_DEG = 1.5         # diameter of the target dot
        TARGET_OFFSET_DEG = 6.0       # distance of the target from screen centre

        # --- Degrees -> pixels (no need to edit below this line) ---------------
        # "import math" loads Python's maths functions (tan, radians, ...).
        import math

        # Step 1: pixels per centimetre on the screen.
        #   1920 px / 60.6 cm = about 31.7 px per cm
        PIX_PER_CM = SCREEN_WIDTH_PX / SCREEN_WIDTH_CM

        # Step 2: how many centimetres one degree covers at the screen centre.
        #   Picture a triangle from the eye to the screen: the viewing distance
        #   is one side, and 1 degree is the angle at the eye. Splitting it into
        #   two halves of 0.5 degree each gives two right-angled triangles, so
        #   1 degree spans 2 x distance x tan(0.5 degree) on the screen.
        #   math.radians() converts degrees to radians, which math.tan() needs.
        #   95 cm away -> about 1.66 cm per degree
        CM_PER_DEG = 2 * VIEWING_DISTANCE_CM * math.tan(math.radians(0.5))

        # Step 3: pixels per degree = pixels per cm x cm per degree
        #   (about 52.5 for the MEG lab display).
        PIX_PER_DEG = PIX_PER_CM * CM_PER_DEG

        # Step 4: sizes in whole pixels. round() turns e.g. 78.8 into 79.
        fixSizePix = round(FIXATION_SIZE_DEG * PIX_PER_DEG)       # used by: fixation (Size)
        targetSizePix = round(TARGET_SIZE_DEG * PIX_PER_DEG)      # used by: target (Size)
        targetOffsetPix = round(TARGET_OFFSET_DEG * PIX_PER_DEG)  # used by: target (Position)
    CodeComponent trialSetup
      Code Type = Py
      Before Experiment:
        # =====================================================================
        # trialSetup  -  "Before Experiment" tab
        # =====================================================================
        # WHEN THIS RUNS: once, when the experiment starts.
        # WHAT IT DOES: sets the trial timing, in seconds.
        #
        # A trial runs like this:
        #   blank screen (ITI) -> fixation cross appears -> random wait
        #   (the foreperiod) -> target appears -> response or deadline
        #
        # These names are used in the Start/Stop fields of fixation, target and
        # resp (open each component in Builder to see them).
        # =====================================================================
        ITI = 0.5               # blank screen at the start of each trial
        FOREPERIOD_MIN = 0.8    # shortest wait from fixation to target
        FOREPERIOD_MAX = 1.5    # longest wait from fixation to target
        RESP_DEADLINE = 1.5     # how long the target stays up waiting for a response
      Begin Routine:
        # =====================================================================
        # trialSetup  -  "Begin Routine" tab
        # =====================================================================
        # WHEN THIS RUNS: at the start of every trial, before anything is drawn.
        # WHAT IT DOES: picks this trial's random foreperiod.
        # WHERE IT IS: before fixation, target and resp, because their Start and
        #   Stop times use the variable foreperiod. Builder runs components from
        #   top to bottom, so foreperiod must exist before they need it.
        #
        # random() gives a random number between 0 and 1 (Builder loads it for
        # you). Scaling it gives a number between FOREPERIOD_MIN and
        # FOREPERIOD_MAX, every value equally likely. Example: 0.8 + 0.5 x 0.7
        # = 1.15 seconds.
        # =====================================================================
        foreperiod = FOREPERIOD_MIN + random() * (FOREPERIOD_MAX - FOREPERIOD_MIN)

        # addData(column, value) writes a value into this trial's row of the
        # data file.
        thisExp.addData('foreperiod', foreperiod)
      End Routine:
        # =====================================================================
        # trialSetup  -  "End Routine" tab
        # =====================================================================
        # WHEN THIS RUNS: at the end of every trial (after a response, or when
        #   the deadline passes).
        # WHAT IT DOES: records whether the participant responded, and makes
        #   sure the trigger pixel is black before the next trial.
        # =====================================================================

        # resp.keys holds the key that was pressed ('7' or '2'), or nothing if
        # no key was pressed in time. "not resp.keys" is True when it is empty.
        if not resp.keys:
            thisExp.addData('timeout', 1)   # no response before the deadline
        else:
            thisExp.addData('timeout', 0)   # responded in time

        # Safety step: trigger pixel back to black between trials.
        # set_trigger_pixel and TRIG_OFF come from the vpixxSetup component.
        set_trigger_pixel(TRIG_OFF)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (fixSizePix, fixSizePix)
      startVal [time (s)] = ITI
      stopVal [duration (s)] = foreperiod + RESP_DEADLINE
      units = pix
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    PolygonComponent target
      fillColor = white
      pos [set every repeat] = (targetX * targetOffsetPix, 0)
      shape = circle
      size = (targetSizePix, targetSizePix)
      startVal [time (s)] = ITI + foreperiod
      stopVal [duration (s)] = RESP_DEADLINE
      units = pix
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    KeyboardComponent resp
      allowedKeys = '7', '2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = ITI + foreperiod
      stopVal [duration (s)] = RESP_DEADLINE
      store = first key
      storeCorrect = True
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    CodeComponent onsetTriggers
      Code Type = Py
      Each Frame:
        # =====================================================================
        # onsetTriggers  -  "Each Frame" tab
        # =====================================================================
        # WHEN THIS RUNS: on every screen refresh during the trial, 120 times
        #   per second.
        # WHAT IT DOES: sends trigger 1 when the fixation cross appears and
        #   trigger 2 or 4 when the target appears.
        #
        # WHERE IT IS - THIS MATTERS: it must stay BELOW fixation and target.
        #   On each frame Builder goes through the components from top to
        #   bottom, then refreshes the screen. When a stimulus is due, its
        #   component switches it on during that pass. Because this component
        #   comes after them, it sees the stimulus switch on in the SAME pass,
        #   so the trigger and the stimulus appear on the same screen refresh.
        #   Moved above them, every trigger would be one frame (8.3 ms) late.
        #
        # NAMES USED HERE THAT COME FROM ELSEWHERE:
        #   frameN                 -> Builder: number of the current frame in
        #                             this trial (0, 1, 2, ...)
        #   fixation, target       -> the stimulus components in this routine
        #   STARTED                -> Builder: status of a stimulus on screen
        #   .frameNStart           -> Builder: the frame number a stimulus
        #                             appeared on
        #   targetSide             -> conditions.csv: 'left' or 'right'
        #   set_trigger_pixel, send_trigger, TRIG_... -> vpixxSetup component
        # =====================================================================

        # Step 1: start every frame with the trigger pixel black.
        # If a trigger was sent on the previous frame, this switches it off, so
        # each trigger lasts exactly one frame (8.3 ms, about 10 MEG samples at
        # 1200 Hz). On frames with nothing new, the pixel simply stays black.
        set_trigger_pixel(TRIG_OFF)

        # Step 2: did the fixation cross appear on this frame?
        # Both conditions must be true: the cross is on screen, AND the frame it
        # appeared on is this one. That is true on exactly one frame per trial.
        if fixation.status == STARTED and fixation.frameNStart == frameN:
            send_trigger(TRIG_FIXATION, 'fixation')

        # Step 3: did the target appear on this frame?
        # Choose the trigger by the side the target is on in this trial.
        if target.status == STARTED and target.frameNStart == frameN:
            if targetSide == 'left':
                send_trigger(TRIG_TARGET_L, 'target')
            else:
                send_trigger(TRIG_TARGET_R, 'target')

        # Step 2 or 3 overrides Step 1 on an onset frame, because the colour
        # that counts is the last one set before the screen refreshes.
        # To make triggers last longer than one frame, replace
        # "fixation.frameNStart == frameN" with
        # "frameN < fixation.frameNStart + 3" (3 frames), and the same for target.
  Routine thanks
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    TextComponent thanksText
      letterHeight = 32
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
      wrapWidth = 1400
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      text:
        Thank you!

        The task is complete.
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict({'targetSide': 'left', 'targetX': np.int64(-1), 'corrAns': np.int64(7)}),
      OrderedDict({'targetSide': 'right', 'targetX': np.int64(1), 'corrAns': np.int64(2)})]
    Routine trial
  LoopTerminator trials
  Routine thanks
